PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 960]
  expName = VLT_v4
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine TLX
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    VariableComponent TLX_Labelstr
      startExpValue = 'Very\nLow','','','','','','','','','','Very\nHigh'
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    CodeComponent code_TLX
      Code Type = Auto->JS
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      Begin Experiment:
        TLX_num = 0
      Begin Routine:
        sd.stop()

        if TLX_Label_Num == 1:
            TLX_Labelstr = 'Very\nLow','','','','','','','','','','Very\nHigh'
        elif TLX_Label_Num == 2:
            TLX_Labelstr = 'Very\nGood','','','','','','','','','','Very\nPoor'
      End Routine:
        # Load the CSV file
        with open(filename+'_Ratings.csv', mode='r') as file:
            reader = csv.reader(file)
            segData = [row for row in reader]
        TLX_num += 1
        new_row = ['TLC_'+TLX_Title+'_'+str(TLX_num), slider_TLX.getRating()]
        segData.append(new_row)

        # Save the modified data back to the CSV file
        with open(filename+'_Ratings.csv', mode='w', newline='') as file:
            writer = csv.writer(file)
            writer.writerows(segData)
    TextComponent text_TLXTitle
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.5
      text [set every repeat] = $TLX_Title
      units = norm
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    TextComponent text_TLXDescription
      letterHeight = 0.06
      pos = (0, 0.1)
      startVal [time (s)] = 0.5
      text [set every repeat] = $TLX_Description
      units = norm
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    SliderComponent slider_TLX
      forceEndRoutine = False
      granularity = 1
      initVal = 6
      labels = TLX_Labelstr
      letterHeight = 0.05
      pos = (0, -.3)
      size = (1.5, 0.1)
      startVal [time (s)] = 0.5
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11)
      units = norm
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    ButtonComponent button_TLX
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -.7)
      size = (0.4, 0.2)
      startVal [time (s)] = 0.5
      text = ENTER
      units = norm
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  Routine Intro
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    VariableComponent CTC_Opac
      startExpValue = -1
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    CodeComponent code_Intro
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/'+IntroWav
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(Vol*trialdata, samplerate=trialfs)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            CTC_Opac = -1
        elif not playing:
            CTC_Opac = 1
      End Routine:
        sd.stop()
    TextComponent text_Intro
      letterHeight = 0.07
      startVal [time (s)] = 0.5
      text [set every repeat] = $IntroText
      units = norm
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    MouseComponent mouse_Intro
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_Intro
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_CTC_Intro
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0, -0.7)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere to continue~~
      units = norm
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  Routine MapIntro
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    CodeComponent code_MapIntro
      Code Type = Auto->JS
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      Begin Routine:
        if ProgressBarTF == 1:
            BarOpac = 1
            RunBar = True
        else:
            BarOpac = -1
            RunBar = False

        trial_filename = './Sounds/'+MapIntroWav
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(trialdata, samplerate=trialfs, device=speakersDev)
      Each Frame:
        if RunBar and t>0.5:
            BarProgress = (t-0.5)/30

        playing = sd.get_stream().active

        if playing:
            CTC_Opac = -1
        elif not playing:
            CTC_Opac = 1
    VariableComponent BarProgress
      startExpValue = 0
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    VariableComponent BarOpac
      startExpValue = -1
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    ImageComponent image_MapIntro
      image [set every repeat] = $"./Maps/"+MapIntroMap
      pos = (0, .5)
      size = [1.9,.8]
      startVal [time (s)] = 0
      units = norm
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    TextComponent text__MapIntro
      letterHeight = 0.07
      pos = (0, -.25)
      startVal [time (s)] = 0.5
      text [set every repeat] = $MapIntroText
      units = norm
      wrapWidth = 1.5
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    KeyboardComponent key_resp_MapIntro
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ProgressComponent prog_MapIntro
      anchor = center-left
      borderColor = white
      fillColor = None
      lineWidth = 4
      opacity [set every repeat] = BarOpac
      pos = (-.5, -.7)
      progress [set every frame] = BarProgress
      size = (1, 0.1)
      startVal [time (s)] = 0
      units = norm
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    MouseComponent mouse_MapIntro
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1
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    TextComponent text_CTC_MapIntro
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0, -0.8)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere to continue~~
      units = norm
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  Routine BorgRating
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    VariableComponent inputText
      startExpValue = '#'
      startRoutineValue = '#'
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    KeyboardComponent VER_key_resp
      allowedKeys = 'return','y','n','left','right','space','1','2','3','4','5','6','7','8','9','0','period','return','backspace','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0','num_decimal','num_subtract','period','comma'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_Borg
      Code Type = Auto->JS
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      Begin Experiment:
        BorgIter = -1

        NumResponse = ''

        VER_num = 0
      Begin Routine:
        #sd.stop()

        theseKeys=""
        VER_num_text.alignHoriz ='left'
        first_press = True
      Each Frame:
        if mouse_Borg.isPressedIn(polygon_1):
            NumResponse = '1'
        if mouse_Borg.isPressedIn(polygon_2):
            NumResponse = '2'
        if mouse_Borg.isPressedIn(polygon_3):
            NumResponse = '3'
        if mouse_Borg.isPressedIn(polygon_4):
            NumResponse = '4'
        if mouse_Borg.isPressedIn(polygon_5):
            NumResponse = '5'
        if mouse_Borg.isPressedIn(polygon_6):
            NumResponse = '6'
        if mouse_Borg.isPressedIn(polygon_7):
            NumResponse = '7'
        if mouse_Borg.isPressedIn(polygon_8):
            NumResponse = '8'
        if mouse_Borg.isPressedIn(polygon_9):
            NumResponse = '9'
        if mouse_Borg.isPressedIn(polygon_0):
            NumResponse = '0'
        if mouse_Borg.isPressedIn(polygon_Dot):
            NumResponse = ''
            if len(inputText) == 0:
                inputText += '0.'
            else:
                inputText += '.'
            time.sleep(.1)

        if NumResponse != '':
            if inputText == '#':
                inputText = NumResponse
            else:
                inputText += NumResponse
            NumResponse = ''
            time.sleep(.1)

        if mouse_Borg.isPressedIn(polygon_Back):
            inputText = inputText[:-1]  # lose the final character
            time.sleep(.1)

        if len(_VER_key_resp_allKeys) and keyReady:
            keyReady = False
            VER_key_resp.keys = _VER_key_resp_allKeys[-1].name  # just the last key pressed
            VER_key_resp.rt = _VER_key_resp_allKeys[-1].rt
            if first_press:
                inputText = ''
                first_press = False

            elif VER_key_resp.keys in ['right','space']:
                continueRoutine = False

            elif VER_key_resp.keys in ['num_1', '1']:
                inputText += '1'

            elif VER_key_resp.keys in ['num_2', '2']:
                inputText += '2'

            elif VER_key_resp.keys in ['num_3', '3']:
                inputText += '3'

            elif VER_key_resp.keys in ['num_4', '4']:
                inputText += '4'

            elif VER_key_resp.keys in ['num_5', '5']:
                inputText += '5'

            elif VER_key_resp.keys in ['num_6', '6']:
                inputText += '6'

            elif VER_key_resp.keys in ['num_7', '7']:
                inputText += '7'

            elif VER_key_resp.keys in ['num_8', '8']:
                inputText += '8'

            elif VER_key_resp.keys in ['num_9', '9']:
                inputText += '9'

            elif VER_key_resp.keys in ['num_0', '0']:
                inputText += '0'

            elif VER_key_resp.keys in ['period', 'comma','num_decimal']:
                if len(inputText) == 0:
                    inputText += '0,'
                else:
                    inputText += '.'

            elif VER_key_resp.keys in ['backspace','num_subtract']:
                inputText = inputText[:-1]  # lose the final character

            #VER_key_resp = []
            _VER_key_resp_allKeys = []
            theseKeys = []
        elif len(_VER_key_resp_allKeys) == 0:
            keyReady = True
      End Routine:
        #sd.stop()

        # Load the CSV file
        with open(filename+'_Ratings.csv', mode='r') as file:
            reader = csv.reader(file)
            segData = [row for row in reader]

        VER_num += 1

        new_row = ['VER_'+str(VER_num), inputText]
        segData.append(new_row)

        # Save the modified data back to the CSV file
        with open(filename+'_Ratings.csv', mode='w', newline='') as file:
            writer = csv.writer(file)
            writer.writerows(segData)


        # let's store the final text string into the results finle...
        thisExp.addData('VER', inputText)
        inputText="#"
        thisExp.addData('Task','VER')
    ImageComponent image_BorgScale
      image = PsychoPy/borg_cr100.png
      pos = (-0.5, 0)
      size = (0.8,1.9)
      startVal [time (s)] = 0.5
      texture resolution = 512
      units = norm
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    TextComponent text_BorgScale
      letterHeight = 0.06
      pos = (0.5, 0.6)
      startVal [time (s)] = 0.5
      units = norm
      wrapWidth = 0.8
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      text:
        Please rate your vocal effort level by saying
        "My vocal effort level is..."
        and then speak the value that corresponds with your vocal effort level.
        Type this value.
    TextComponent VER_num_text
      letterHeight = 0.125
      pos = (0.5, .25)
      startVal [time (s)] = 0.5
      text [set every frame] = $inputText
      units = norm
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    MouseComponent mouse_Borg
      forceEndRoutineOnPress = never
      saveMouseState = on click
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    ButtonComponent button_Borg
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.5, -.8)
      size = (0.3, .15)
      startVal [time (s)] = 0.5
      text = ENTER
      units = norm
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      callback:
        if inputText != '' and inputText != '#':
            continueRoutine = False
            break
    PolygonComponent polygon_1
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.4, -0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_2
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.5, -0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_3
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.6, -0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_4
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.4, -0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_5
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.5, -0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_6
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.6, -0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_7
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_8
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.5, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_9
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.6, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_Back
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.4, -0.4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_0
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.5, -0.4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_Dot
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.6, -0.4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    TextComponent text_1
      color = black
      letterHeight = 0.06
      pos = (0.4, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 1
      units = norm
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    TextComponent text_2
      color = black
      letterHeight = 0.06
      pos = (0.5, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 2
      units = norm
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    TextComponent text_3
      color = black
      letterHeight = 0.06
      pos = (0.6, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 3
      units = norm
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    TextComponent text_4
      color = black
      letterHeight = 0.06
      pos = (0.4, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 4
      units = norm
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    TextComponent text_5
      color = black
      letterHeight = 0.06
      pos = (0.5, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 5
      units = norm
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    TextComponent text_6
      color = black
      letterHeight = 0.06
      pos = (0.6, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 6
      units = norm
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    TextComponent text_7
      color = black
      letterHeight = 0.06
      pos = (0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 7
      units = norm
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    TextComponent text_8
      color = black
      letterHeight = 0.06
      pos = (0.5, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 8
      units = norm
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    TextComponent text_9
      color = black
      letterHeight = 0.06
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 9
      units = norm
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    TextComponent text_Back
      color = black
      letterHeight = 0.06
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = <—
      units = norm
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    TextComponent text_0
      color = black
      letterHeight = 0.06
      pos = (0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 0
      units = norm
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    TextComponent text_Dot
      color = black
      letterHeight = 0.06
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = .
      units = norm
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  Routine BorgRating_Intro
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    CodeComponent code_BorgRating_Intro
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/BorgIntroA.wav'
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(trialdata, samplerate=trialfs)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            CTC_Opac = -1
        elif not playing:
            CTC_Opac = 1
      End Routine:
        sd.stop()
    KeyboardComponent VER_key_resp_2
      allowedKeys = 'return','y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_BorgScale_Intro
      image = PsychoPy/borg_cr100.png
      pos = (-0.5, 0)
      size = (0.8,1.9)
      startVal [time (s)] = 0.5
      texture resolution = 512
      units = norm
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    TextComponent text_BorgScale_Intro
      letterHeight = 0.06
      pos = (0.5, 0)
      startVal [time (s)] = 0.5
      text = You will use the scale on the left to rate your vocal effort. Please read the handout on the Borg CR100 scale. Then click anywhere to continue.
      units = norm
      wrapWidth = 0.8
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    MouseComponent mouse_BorgRating_Intro
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1
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    TextComponent text_CTC_BorgRating_Intro
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0.3, -0.7)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere to continue~~
      units = norm
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  Routine NoiseTest
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    CodeComponent code_Noise
      Code Type = Auto->JS
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      Before Experiment:
        import soundfile as sf
      Begin Experiment:
        noise_filename = './Noise/noise_2.wav'
        noisedata, noisefs = sf.read(noise_filename, dtype='float32')
      Begin Routine:
        sd.play(noisedata, samplerate=noisefs)

        CTC_Opac = 1
      End Routine:
        sd.stop()
        CTC_Opac = -1
    TextComponent text_NoiseTest
      letterHeight = 0.07
      startVal [time (s)] = 0.5
      units = norm
      wrapWidth = 1.5
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      text:
        Speak the names of the months of the year:

        January, February, March, April, May, June, July, August, September, October, November, December
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_NoiseTest
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1
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    TextComponent text_CTC_NoiseTest
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0, -0.7)
      startVal [time (s)] = 0.5
      text = ~~When finished, click anywhere to continue~~
      units = norm
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  Routine Begin
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    CodeComponent code_Begin
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/Begin.wav'
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(trialdata, samplerate=trialfs)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            CTC_Opac = -1
        elif not playing:
            CTC_Opac = 1
      End Routine:
        sd.stop()
    TextComponent text_Begin
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      text = Any questions before you begin?
      units = norm
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    KeyboardComponent key_resp_Begin
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_Begin
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = .5
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  Routine MAP_Task
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    VariableComponent TrialID
      startExpValue = ''
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    CodeComponent code_Map
      Code Type = Auto->JS
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      Begin Experiment:
        # See Noise Test for preloading of sound files

        MapTrial = 0
        TrialID = ''
      Begin Routine:
        playing = sd.get_stream().active

        if playing:
            sd.stop()

        BarProgress = 0

        t1 = time.time()-timeStart

        MapTrial += 1

        if NoiseType == 1 and SpeakerType == 1:
            sd.play(0.9*noisedata, samplerate=noisefs, device=speakersDev)
            TrialID = 'SpeakerNoise'
        elif NoiseType == 2 and SpeakerType == 1:
            sd.play(babbledata, samplerate=babblefs, device=speakersDev)
            TrialID = 'SpeakerBabble'
        elif NoiseType == 1 and SpeakerType == 2:
            sd.play(0.9*noisedata, samplerate=noisefs, device=headphonesDev)
            TrialID = 'HeadphoneNoise'
        elif NoiseType == 2 and SpeakerType == 2:
            sd.play(babbledata, samplerate=babblefs, device=headphonesDev)
            TrialID = 'HeadphoneBabble'
        elif NoiseType == 3:
            TrialID = 'NoNoise'

        buttons = []
      End Routine:
        #sd.stop()

        with open(filename+'_segtimes.csv', mode='r') as file:
            reader = csv.reader(file)
            segData = [row for row in reader]
        t2 = time.time()-timeStart

        new_row = [str(MapTrial)+'_'+TrialID, t1, t2]
        segData.append(new_row)

        # Save the modified data back to the CSV file
        with open(filename+'_segtimes.csv', mode='w', newline='') as file:
            writer = csv.writer(file)
            writer.writerows(segData)
    ImageComponent image_map
      image [set every repeat] = $"./Lectures-150/"+LectureSlide
      size = (2,2)
      startVal [time (s)] = 0.5
      units = norm
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    ProgressComponent prog_Map
      anchor = center-left
      borderColor = white
      disabled = True
      fillColor = None
      lineWidth = 4
      opacity [set every repeat] = BarOpac
      pos = (-0.5, -.85)
      progress [set every frame] = BarProgress
      size = (1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    KeyboardComponent key_resp_Map
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_10
      color = black
      letterHeight = 0.04
      pos = (0.8, -0.8)
      startVal [time (s)] = 0.5
      text [set every repeat] = $TrialID
      units = norm
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    MouseComponent mouse_MAP_task
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine End
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    CodeComponent code_End
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/End.wav'
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(trialdata, samplerate=trialfs)
      End Routine:
        sd.stop()
    TextComponent text_End
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      text = Thank you for your participation.
      units = norm
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    KeyboardComponent key_resp_End
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine slider_test
    RoutineSettingsComponent slider_test
      disabled = True
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    VariableComponent slide_val
      startExpValue = 0
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        slide_val = round(int(0 if slider.getRating() is None else slider.getRating()),3)
    SliderComponent slider
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 0
      labels = ("0    Nothing at all", "1    ", "2    Minimal", "3    Extremely weak", "5    ", "6    Very weak", "7    ", "10    ", "13    Weak         Light", "15    ", "20    ", "25    Moderate", "30    ", "35    ", "37    Somewhat strong", "40    ", "45    ", "50    Strong        Heavy", "55    ", "60    ", "65    ", "70    Very Strong", "75    ", "80    ", "85    ", "90    Extremely strong", "95    ", "100    Max     almost maximal", "110    ", "120    Absolute maxmimum")
      letterHeight = 0.03
      ori = 90
      size = (1.9, 0.2)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 1, 2, 3, 5, 6, 7, 10, 13, 15, 20, 25, 30, 35, 37, 40, 45, 50, 55, 60, 65, 70, 75, 80, 85, 90, 95, 100, 110, 120)
      units = norm
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    TextComponent text
      letterHeight = 0.05
      pos = (.5, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $slide_val
      units = norm
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  Routine Practice
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    CodeComponent code_Practice
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/practice.wav'
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(Vol*trialdata, samplerate=trialfs)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            CTC_Opac = -1
        elif not playing:
            CTC_Opac = 1
      End Routine:
        sd.stop()
    TextComponent text_Practice
      letterHeight = 0.07
      startVal [time (s)] = 0.5
      text [set every repeat] = Now you practice. Click anywhere when you need to advance the screen.
      units = norm
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    MouseComponent mouse_Practice
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_Practice
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_CTC_Practice
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0, -0.7)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere to continue~~
      units = norm
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  Routine Vowel
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    VariableComponent tbar
      startExpValue = 0
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    CodeComponent code_Vowel
      Code Type = Auto->JS
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      Begin Experiment:
        SVID = 0
      Begin Routine:
        if SVID < 1:
            read_filename = './Sounds/vowel.wav'
            readdata, readfs = sf.read(read_filename, dtype='float32')
        else:
            read_filename = './Sounds/blank.wav'
            readdata, readfs = sf.read(read_filename, dtype='float32')


        t1 = time.time()-timeStart+len(readdata)/readfs

        sd.play(readdata, samplerate=readfs)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            tbar = 0
            tstart = t
        elif not playing:
            tbar = (t-tstart)/3.5

        if tbar < 1:
            CTC_Opac = -1
        elif tbar >= 1:
            CTC_Opac = 1
      End Routine:
        if SVID < 1:
            sd.stop()

        with open(filename+'_segtimes.csv', mode='r') as file:
            reader = csv.reader(file)
            segData = [row for row in reader]
        t2 = time.time()-timeStart

        SVID += 1
        new_row = ['SV_'+str(SVID), t1, t2]
        segData.append(new_row)

        # Save the modified data back to the CSV file
        with open(filename+'_segtimes.csv', mode='w', newline='') as file:
            writer = csv.writer(file)
            writer.writerows(segData)
    TextComponent text_Vowel_Title
      letterHeight = 0.06
      pos = (0, 0.6)
      startVal [time (s)] = 0.5
      text = Using your natural voice with comfortable pitch and loudness, say AH for 3 seconds. You will do this 3 times. 
      units = norm
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    TextComponent text_Vowel
      letterHeight = 0.07
      pos = (0, -0.15)
      startVal [time (s)] = 0.5
      text = AAAH
      units = norm
      wrapWidth = 1.7
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    TextComponent text_CTC_Vowel
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0, -0.7)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere to continue~~
      units = norm
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    KeyboardComponent key_resp_Vowel
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_Vowel
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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    ProgressComponent prog_vowel
      anchor = center left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-.25, -0.4)
      progress [set every frame] = $tbar
      size = (0.5, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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  Routine BorgRating_Intro_2
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    CodeComponent code_BorgRating_Intro_2
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/BorgIntroB.wav'
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(trialdata, samplerate=trialfs)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            CTC_Opac = -1
        elif not playing:
            CTC_Opac = 1
      End Routine:
        sd.stop()
    KeyboardComponent VER_key_resp_3
      allowedKeys = 'return','y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_BorgScale_Intro_2
      image = PsychoPy/borg_cr100.png
      pos = (-0.5, 0)
      size = (0.8,1.9)
      startVal [time (s)] = 0.5
      texture resolution = 512
      units = norm
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    TextComponent text_BorgScale_Intro_2
      letterHeight = 0.06
      pos = (0.5, 0)
      startVal [time (s)] = 0.5
      units = norm
      wrapWidth = 0.8
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      text:
        For this experiment you will say "My vocal effort level is..." and then speak the value that corresponds with your vocal effort level.

        Type this into the computer using the onscreen numbers. You may use decimals and backspace. When you are finished with your rating click the "ENTER" button.

        Now you will practice speaking in noise and then rating your vocal effort level.
    MouseComponent mouse_BorgRating_Intro_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1
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    TextComponent text_CTC_BorgRating_Intro_2
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0.3, -0.7)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere to continue~~
      units = norm
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  Routine emo_text
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    VariableComponent et_pb
      startExpValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30.5
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    TextComponent text_12
      letterHeight = 0.08
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 30
      text = Please read out loud.
      units = norm
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.07
      size = (1.75, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 30
      text [set every repeat] = TEXT WILL GO HERE
      units = norm
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    ProgressComponent prog
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (0, -.8)
      progress [set every frame] = $et_pb
      size = (1.5, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 30
      units = norm
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        et_pb = 0
      Each Frame:
        et_pb = (t-0.5)/30
  Routine emo_pic
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    VariableComponent ep_pb
      startExpValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 31.5
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    TextComponent text_13
      letterHeight = 0.08
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 31
      text = Please read out loud.
      units = norm
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.07
      size = (1.75, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 31
      text [set every repeat] = PICTURE WILL GO HERE
      units = norm
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    ProgressComponent prog_2
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (0, -.8)
      progress [set every frame] = $ep_pb
      size = (1.5, 0.2)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 30
      units = norm
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        ep_pb = 0
      Each Frame:
        ep_pb = (t-1.5)/30
  Routine emo_vid_a
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $'.\\Video\\'+Video
      size = [2,2]
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine emo_vid_b
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    VariableComponent ev_pb
      startExpValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 31.5
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    TextComponent text_14
      letterHeight = 0.08
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 31
      text = Please describe what happened in the video.
      units = norm
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    ProgressComponent prog_3
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (0, -.8)
      progress [set every frame] = $ev_pb
      size = (1.5, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 31
      units = norm
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        ev_pb = 0

        if Noise == 'Low':
            sd.play(NLdata, samplerate=NLfs, loop=True)
        elif Noise == 'High':
            sd.play(NHdata, samplerate=NHfs, loop=True)
      Each Frame:
        ev_pb = (t-1.5)/30
    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 31.5
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    ImageComponent image
      image [set every repeat] = $'.\\Video\\'+Picture
      size = (1.4, 1.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 31
      units = norm
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  Routine noise_cog
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    VariableComponent match_color
      startExpValue = 'gray'
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    VariableComponent nb_img
      startExpValue = './NBack/blank.png'
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    VariableComponent noise_cog_text
      startExpValue = ""
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    CodeComponent noise_cog_code
      Code Type = Auto->JS
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      Begin Experiment:
        nback_data = pd.read_excel('1back_trial_sequence.xlsx')
        nback_images = nback_data['ImageFile'].tolist()
        nback_Target = nback_data['IsTarget'].tolist()
        nback_Noise = nback_data['Noise'].tolist()

        feedback_given = [False] * len(nback_images)
        space_pressed = [False] * len(nback_images)


        current_trial = 0
        trial_timer = core.Clock()
        nb_routine_start_time = None
        nb_noise_timer = core.Clock()

        stimulus_duration = .5
        isi_duration = 2.5
        total_trial_duration = stimulus_duration + isi_duration

        correct = 0
      Begin Routine:
        if nb_routine_start_time is None:
            nb_routine_start_time = nb_noise_timer.getTime()

            sd.play(NLdata, samplerate=NLfs, loop=True)
            current_noise = 'Low'

        trial_timer.reset()

        if current_trial <= len(nback_images):
            nb_img = './NBack/' + nback_images[current_trial]
        else:
            current_trial = 0
            nb_img = './NBack/' + nback_images[current_trial]
      Each Frame:
        if nback_key_resp.status == STARTED and not waitOnFlip:
            theseKeys = nback_key_resp.getKeys(keyList=['space'], ignoreKeys=["escape"], waitRelease=False)
            _nback_key_resp_allKeys.extend(theseKeys)
            if len(_nback_key_resp_allKeys):
                nback_key_resp.keys = _nback_key_resp_allKeys[-1].name  # just the last key pressed

        # Your existing timing code
        trial_time = trial_timer.getTime()
        if trial_time < stimulus_duration:
            nb_img = './NBack/' + nback_images[current_trial]
        else:
            nb_img = './NBack/blank.png'

        # Check if spacebar was pressed during this trial and give immediate feedback
        if nback_key_resp.keys and not space_pressed[current_trial]:
            space_pressed[current_trial] = True

            if nback_Target[current_trial] == 1:
                match_color = 'green'  # Correct hit - show immediately
            else:
                match_color = 'red'  # False alarm - show immediately

        # Check for missed target after stimulus ends
        if trial_time >= (total_trial_duration - stimulus_duration) and not feedback_given[current_trial]:
            if not space_pressed[current_trial] and nback_Target[current_trial] == 1:
                match_color = 'red'  # Missed target - show for remainder of trial

            feedback_given[current_trial] = True

        # Your existing trial advancement code
        if trial_time >= total_trial_duration:
            # Reset everything for next trial BEFORE incrementing
            match_color = 'gray'
            nback_key_resp.keys = None
            nback_key_resp.rt = None
            _nback_key_resp_allKeys = []

            current_trial += 1

            if current_trial >= len(nback_images):
                sd.stop()
                continueRoutine = False
                noise_cog_trials.finished = True
            else:
                trial_timer.reset()
                correct = 0

                if nback_Noise[current_trial] == 'Low':
                    sd.play(NLdata, samplerate=NLfs, loop=True)
                elif nback_Noise[current_trial] == 'High':
                    sd.play(NHdata, samplerate=NHfs, loop=True)
      End Routine:
        #sd.stop()
    TextboxComponent noise_cog_textbox
      bold = False
      editable = False
      letterHeight = 0.08
      padding = 0.1
      pos = (-.25, 0)
      size = (1.3, 1.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Text
      units = norm
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    ImageComponent nback_image
      image [set every frame] = $nb_img
      pos = (0.6,0)
      size = (0.5, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent nback_key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent text_adv_key_resp
      allowedKeys = 'right','return','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor [set every frame] = $match_color
      pos = (0.6, -.5)
      shape = circle
      size = (0.2, 0.22)
      startVal [time (s)] = 0.0
      units = norm
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  Routine emo_vid_c
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    VariableComponent ev_pb_2
      startExpValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 31.5
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    TextComponent text_15
      letterHeight = 0.08
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 31
      text = Please describe how the video made you feel.
      units = norm
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    ProgressComponent prog_4
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (0, -.8)
      progress [set every frame] = $ev_pb_2
      size = (1.5, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 31
      units = norm
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        ev_pb_2 = 0
      Each Frame:
        ev_pb_2 = (t-1.5)/30
      End Routine:
        #sd.stop()
    KeyboardComponent key_resp_8
      allowedKeys = 'y','n','left','right','space'
      durationEstim = 31.5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $'.\\Video\\'+Picture
      size = (1.4, 1.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 31
      units = norm
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  Routine cog_intro_1
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    CodeComponent code_cog_intro_1
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/CogIntro.wav'
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(trialdata, samplerate=trialfs)
      Each Frame:
        playing = sd.get_stream().active


        if playing:
            CTC_Opac = -1
        elif not playing:
            CTC_Opac = 1
      End Routine:
        sd.stop()
    TextComponent text_cog_intro_1
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      units = norm
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      text:
        Now you will do a brief attention test.

        You will see a square appear in different positions on a 2x2 grid. Your job is to decide whether each square appears in the same position as the one previously shown.

        What to do:

        Press the SPACE BAR if the position matches the previous one

        Do not press anything if it does not match

        If you match correctly, you will see a green circle. If you miss a match or make a mistake you will see a red circle.

        Try to respond as quickly and accurately as possible. Stay focused throughout the task!
    KeyboardComponent key_resp_cog_intro_1
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    MouseComponent mouse_cog_intro_1
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = .5
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    TextComponent text_CTC_cog_intro_1
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0, -0.7)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere when ready to begin~~
      units = norm
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  Routine cog_intro_2
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    CodeComponent code_cog_intro_2
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/CogNoise.wav'
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(trialdata, samplerate=trialfs)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            CTC_Opac = -1
        elif not playing:
            CTC_Opac = 1
      End Routine:
        sd.stop()
    TextComponent text_cog_intro_2
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      units = norm
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      text:
        Next you will combine the attention test with the lectures in noise.

        Try to respond as quickly and accurately as possible while communicating clearly.  Stay focused throughout the task!
    KeyboardComponent key_resp_cog_intro_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_cog_intro_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = .5
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    TextComponent text_CTC_cog_intro_2
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0, -0.7)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere when ready to begin~~
      units = norm
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  Routine cog_practice
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    VariableComponent Text_cog_practice
      startExpValue = ""
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    VariableComponent match_color_2
      startExpValue = 'gray'
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    VariableComponent nb_img_2
      startExpValue = './NBack/blank.png'
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    CodeComponent noise_cog_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        nback_data_2 = pd.read_excel('1back_trial_sequence_short.xlsx')
        nback_images_2 = nback_data_2['ImageFile'].tolist()
        nback_Target_2 = nback_data_2['IsTarget'].tolist()

        trial_timer_2 = core.Clock()
      Begin Routine:
        if not repeat_flag:
            cog_practice_trials.finished = True
            continueRoutine = False

        trial_timer_2.reset()

        feedback_given_2 = [False] * len(nback_images_2)
        space_pressed_2 = [False] * len(nback_images_2)


        current_trial_2 = 0
        nb_routine_start_time_2 = None

        correct_2 = 0

        nb_img_2 = './NBack/' + nback_images_2[current_trial_2]
      Each Frame:
        if nback_key_resp_2.status == STARTED and not waitOnFlip:
            theseKeys = nback_key_resp_2.getKeys(keyList=['space'], ignoreKeys=["escape"], waitRelease=False)
            _nback_key_resp_2_allKeys.extend(theseKeys)
            if len(_nback_key_resp_2_allKeys):
                nback_key_resp_2.keys = _nback_key_resp_2_allKeys[-1].name  # just the last key pressed

        # Your existing timing code
        trial_time_2 = trial_timer_2.getTime()
        if trial_time_2 < stimulus_duration:
            nb_img_2 = './NBack/' + nback_images_2[current_trial_2]
        else:
            nb_img_2 = './NBack/blank.png'

        # Check if spacebar was pressed during this trial and give immediate feedback
        if nback_key_resp_2.keys and not space_pressed_2[current_trial_2]:
            space_pressed_2[current_trial_2] = True

            if nback_Target_2[current_trial_2] == 1:
                match_color_2 = 'green'  # Correct hit - show immediately
                Text_cog_practice = 'Match!'
            else:
                match_color_2 = 'red'  # False alarm - show immediately
                Text_cog_practice = 'Incorrect.'

        # Check for missed target after stimulus ends
        if trial_time_2 >= (total_trial_duration - stimulus_duration) and not feedback_given_2[current_trial_2]:
            if not space_pressed_2[current_trial_2] and nback_Target_2[current_trial_2] == 1:
                match_color_2 = 'red'  # Missed target - show for remainder of trial
                Text_cog_practice = 'Missed it...'

            feedback_given_2[current_trial_2] = True

        # Your existing trial advancement code
        if trial_time_2 >= total_trial_duration:
            # Reset everything for next trial BEFORE incrementing
            match_color_2 = 'gray'
            Text_cog_practice = ''
            nback_key_resp_2.keys = None
            nback_key_resp_2.rt = None
            _nback_key_resp_2_allKeys = []

            current_trial_2 += 1

            if current_trial_2 >= len(nback_images_2):
                continueRoutine = False
            else:
                trial_timer_2.reset()
                correct_2 = 0
      End Routine:
        #sd.stop()
    ImageComponent nback_image_2
      image [set every frame] = $nb_img_2
      pos = (0.6,0)
      size = (0.5, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent nback_key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent adv_key_resp_2
      allowedKeys = 'right','return','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_10
      fillColor [set every frame] = $match_color_2
      pos = (0.6, -.5)
      shape = circle
      size = (0.2, 0.22)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent cog_practice_textbox
      bold = False
      editable = False
      letterHeight = 0.08
      padding = 0.1
      pos = (-.25, 0)
      size = (1.3, 1.9)
      startVal [time (s)] = 0.0
      text [set every frame] = $Text_cog_practice
      units = norm
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  Routine REST
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    VariableComponent rest_t
      startExpValue = 0
      stopVal [duration (s)] = 30
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    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Please rest.
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    ProgressComponent prog_5
      anchor = center-left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-.5, -0.4)
      progress [set every frame] = rest_t
      size = (1, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      units = norm
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        rest_t =0
      Each Frame:
        rest_t = t/30
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine emo_intro
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    CodeComponent code_emo_intro
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/EmoIntro.wav'
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(trialdata, samplerate=trialfs)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            CTC_Opac = -1
        elif not playing:
            CTC_Opac = 1
      End Routine:
        sd.stop()
    TextComponent text_emo_intro
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      units = norm
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      text:
        Now you will watch several videos and describe your responses to each one.

        For each video:

            -  Watch the video (30 seconds)

            -  Describe what happened in the video for a full 30 seconds by detailing what you saw and what occurred in the video

            -  Describe how the video made you feel for a full 30 seconds by expressing your emotional reactions and how the video affected you
    KeyboardComponent key_resp_emo_intro
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_emo_intro
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = .5
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    TextComponent text_CTC_emo_intro
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0, -0.7)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere when ready to begin~~
      units = norm
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  Routine REPEAT
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        repeat_flag = True
      Begin Routine:
        if not repeat_flag:
            cog_practice_trials.finished = True
            continueRoutine = False
    ButtonComponent y_button
      bold = True
      fillColor = -0.6078, 0.6078, -0.6078
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.5, -.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = YES
      units = norm
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    ButtonComponent n_button
      bold = True
      callback = repeat_flag = False
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.5, -.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = NO
      units = norm
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    TextComponent text_17
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Repeat practice?
      units = norm
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  Routine SAM
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    ImageComponent image_SAM
      image = SAM.png
      pos = (0, 0.25)
      size = [1.6, 1.4]
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_SAM
      Code Type = Auto->JS
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      Begin Routine:
        win.color = 'white'
        win.flip()
      End Routine:
        ## Save screenshot of the entire window
        #participant_id = expInfo.get('participant', 'unknown')
        #session = expInfo.get('session', '001')

        ## Create screenshots directory if it doesn't exist
        #screenshot_dir = os.path.join(_thisDir, 'sam_responses')
        #if not os.path.exists(screenshot_dir):
        #    os.makedirs(screenshot_dir)

        ## Generate filename with timestamp
        #timestamp = datetime.now().strftime('%Y%m%d_%H%M%S')
        #filename = f"SAM_{participant_id}_session{session}_{timestamp}.png"
        #filepath = os.path.join(screenshot_dir, filename)

        ## Capture and save the screen
        #win.getMovieFrame()  # Capture current frame
        #win.saveMovieFrames(filepath)  # Save it

        ## Save filepath to data
        #thisExp.addData('sam_screenshot', filepath)

        # Reset window background to original color (usually gray)
        win.color = 'gray'  # Change to whatever your default is
    BrushComponent brush
      buttonRequired = True
      lineColor = black
      lineWidth = 20
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_SAM
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_SAM
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ButtonComponent button_reset
      bold = True
      callback = brush.reset()
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (.6, -.6)
      size = (0.2, 0.15)
      startVal [time (s)] = 0
      text = RESET
      units = norm
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    TextComponent text_SAM
      color = black
      letterHeight = 0.05
      pos = (-.3, -.7)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Please rate how you feel right now by marking the circles below each figure with your mouse.

        Top row: How pleasant do you feel? (happy to unhappy)
        Middle row: How stimulated do you feel? (excited to calm)
        Bottom row: How much control do you feel? (controlled to in control)

        Click RESET to clear your marks. Click SUBMIT when finished.
    ButtonComponent button_submit
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.6, -.85)
      size = (0.2, 0.15)
      startVal [time (s)] = 0
      text = SUBMIT
      units = norm
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  Routine video_test
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  Routine noise_cog_reset
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    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        # Reset timing variables
        nb_routine_start_time = None
        trial_timer.reset()

        # Reset trial tracking
        current_trial = 0
        current_noise = None

        # Reset keyboard response variables MORE THOROUGHLY
        nback_key_resp.keys = None
        nback_key_resp.rt = None
        nback_key_resp.status = NOT_STARTED  # This is important!
        _nback_key_resp_allKeys = []
        _nback_key_resp_allKeys.clear()  # Extra clearing

        # Reset feedback tracking
        space_pressed = [False] * len(nback_images)
        feedback_given = [False] * len(nback_images)

        # FORCE reset visual feedback
        match_color = 'gray'

        # If you have a circle component, you may need to explicitly set it:
        # nback_circle.fillColor = 'gray'  # uncomment and use your actual component name
        # nback_circle.lineColor = 'gray'

        # Reset performance tracking
        correct = 0

        # Stop any playing audio
        sd.stop()

        # Reset image path
        nb_img = './NBack/blank.png'
  Routine VLT_init
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    VariableComponent pagenum
      startExpValue = 0
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    CodeComponent code_VLT_init
      Code Type = Auto->JS
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      Before Experiment:
        pagelen = len(data.importConditions('PsychoPy/Pics_all.xlsx'))
        pages = list(range(0,pagelen))
      Begin Routine:
        pages = slice(pagenum, pagelen)
      End Routine:
        prepost = 'post'
  Routine STIMULI
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    VariableComponent STIM_text
      startExpValue = ""
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    CodeComponent STIM_code
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd
      Begin Experiment:
        noise_high_filename = './Noise/Noise_High.wav'
        noise_low_filename = './Noise/Noise_Low.wav'
        NHdata, NHfs = sf.read(noise_high_filename, dtype='float32')
        NLdata, NLfs = sf.read(noise_low_filename, dtype='float32')

        previousLevel = None
      Begin Routine:
        if Level != previousLevel:
            sd.stop()
            if Level == 'Low':
                sd.play(NLdata, samplerate=NLfs, loop=True)
            elif Level == 'High':
                sd.play(NHdata, samplerate=NHfs, loop=True)
            previousLevel = Level
      Each Frame:
        if t > Duration:
            VLT_stim.finished = True
            continueRoutine = False
            pagenum -= 1
      End Routine:
        pagenum += 1

        if pagenum > pagelen:
            pagenum = 0
    KeyboardComponent STIM_key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent STIM_image
      image [set every repeat] = $picture_image
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent STIM_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1
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  Routine StimIntro1
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    CodeComponent code_StimIntro1
      Code Type = Auto->JS
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      Begin Routine:
        trialdata, trialfs = sf.read(sound_intro_1, dtype='float32')
        sd.play(Vol*trialdata, samplerate=trialfs)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            #CTC_Opac = -1
            pass
        elif not playing:
            #CTC_Opac = 1
            time.sleep(0.25)
            continueRoutine = False
      End Routine:
        sd.stop()
    MouseComponent mouse_StimIntro1
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_StimIntro1
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_CTC_StimIntro1
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0, -0.7)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere to continue~~
      units = norm
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    ImageComponent StimIntro1_image
      image [set every repeat] = $picture_image_intro1
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine StimIntro2
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    MouseComponent mouse_StimIntro2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_StimIntro2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent StimIntro2_image
      image [set every repeat] = $picture_image_intro2
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine Ready
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    VariableComponent Vol
      startExpValue = 0.62
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    CodeComponent code_ready
      Code Type = Auto->JS
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      Before Experiment:
        import time
        import csv
        import os
        import numpy as np
        from datetime import date
        import sounddevice as sd
      Begin Experiment:
        fs = 44100
        times = np.linspace(0, 0.1, fs, endpoint=True)
        beep = 0.7*np.sin(2 * np.pi * 440 * times)

        today = date.today()
        filename = _thisDir + os.sep + u'data/%s_%s_%s' % (expName, expInfo['participant'],today.strftime('%Y-%m-%d'))
        wavfilename = _thisDir + os.sep + u'data/%s_%s_%s' % (expName, expInfo['participant'],today.strftime('%Y-%m-%d'))+ os.sep + u'data/%s_%s' % (expName, expInfo['participant'])

        if expInfo['participant'] == '999':
            CT_opac = 1
            record_TF = False
        else:
            record_TF = True

        timeStart = time.time();
        #readable_time = time.strftime('%Y-%m-%d %H:%M:%S', time.localtime(timeStart))

        # Construct the file path
        file_path = filename + "_segtimes.csv"
        ver_path = filename + "_ver.csv"

        # Check if the file exists
        if not os.path.exists(file_path):
            with open(filename+'_segtimes.csv', mode='w', newline='') as file:
                writer = csv.writer(file)
                writer.writerow(['Trial', 'T1', 'T2'])

        # Check if the file exists
        if not os.path.exists(ver_path):
            with open(filename+'_Ratings.csv', mode='w', newline='') as file:
                writer = csv.writer(file)
                writer.writerow(['Trial', 'Rating'])

        syncDev = 'Speakers (Cable Creation), Windows DirectSound'
      End Routine:
        with open(filename+'_segtimes.csv', mode='r') as file:
            reader = csv.reader(file)
            segData = [row for row in reader]
        timeStart = time.time();

        #sd.play(beep, samplerate=fs, device=syncDev)
        new_row = ['Beep', timeStart, 0]
        segData.append(new_row)

        # Save the modified data back to the CSV file
        with open(filename+'_segtimes.csv', mode='w', newline='') as file:
            writer = csv.writer(file)
            writer.writerows(segData)

        time.sleep(1.0)
    TextComponent text_ready
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Ready for microphone calibration.
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    KeyboardComponent key_resp_ready
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_TEMP
      clickable = GO
      correctAns = 'GO'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent GO
      fillColor = -0.5294, 0.4039, -0.1137
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.8, -0.8)
      shape = circle
      size = (0.12, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine Ready2
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text = Ready to begin.
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Calibration
    RoutineSettingsComponent Calibration
      disabled = True
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    VariableComponent StepText
      startExpValue = ''
      startRoutineValue = 'Step 1: Place the calibrator on the desk microphone.'
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    VariableComponent prog_Cal_Val
      startExpValue = 0
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    VariableComponent Done1
      startExpValue = False
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    VariableComponent Done2
      startExpValue = False
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    TextComponent text_Cal
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.5
      text = First, we will calibrate the microphones. Please wait.
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    TextComponent text_Cal_Step
      color = black
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0.5
      text [set every frame] = $StepText
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent button_Cal1
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.25, -0.1)
      size = (0.2, .1)
      startVal [time (s)] = 0.5
      text = Step 1
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      callback:
        prog_Cal_Val = 0
        cal1t1 = time.time()-timeStart
        Cal1 = True
    ButtonComponent button_Cal2
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.2, .1)
      startVal [time (s)] = 0.5
      text = Step 2
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      callback:
        if Done1:
            prog_Cal_Val = 0
            cal2t1 = time.time()-timeStart
            Cal2 = True
    ButtonComponent button_Cal3
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.25, -0.1)
      size = (0.2, .1)
      startVal [time (s)] = 0.5
      text = Done!
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      callback:
        if Done1 and Done2:
            continueRoutine = False
            break
    ProgressComponent prog_Cal
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (0, -.6)
      progress [set every frame] = prog_Cal_Val
      size = (1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    CodeComponent code_Cal
      Code Type = Auto->JS
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      Begin Experiment:
        Cal1 = False
        Cal2 = False
      Each Frame:
        if Done1 and not Done2:
            StepText = 'Step 2: At 50 cm, have the participant say a strong "ah" for 5 seconds.'

        if Done1 and Done2:
            StepText = 'Press Done!'

        if Cal1:
            dt = (time.time()-timeStart)-cal1t1
            prog_Cal_Val = dt/3

        if Cal1 and (time.time()-timeStart)-cal1t1 > 3:
            Cal1 = False
            cal1t2 = time.time()-timeStart

            with open(filename+'_segtimes.csv', mode='r') as file:
                reader = csv.reader(file)
                segData = [row for row in reader]

            new_row = ['Cal1', cal1t1, cal1t2]
            segData.append(new_row)

            # Save the modified data back to the CSV file
            with open(filename+'_segtimes.csv', mode='w', newline='') as file:
                writer = csv.writer(file)
                writer.writerows(segData)

            Done1 = True

        if Cal2:
            dt = (time.time()-timeStart)-cal2t1
            prog_Cal_Val = dt/3

        if Cal2 and (time.time()-timeStart)-cal2t1 > 3:
            Cal2 = False
            cal2t2 = time.time()-timeStart

            with open(filename+'_segtimes.csv', mode='r') as file:
                reader = csv.reader(file)
                segData = [row for row in reader]

            new_row = ['Cal2', cal2t1, cal2t2]
            segData.append(new_row)

            # Save the modified data back to the CSV file
            with open(filename+'_segtimes.csv', mode='w', newline='') as file:
                writer = csv.writer(file)
                writer.writerows(segData)

            Done2 = True
  Routine SpeechTask
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    CodeComponent code_SpeechTask
      Code Type = Auto->JS
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      Begin Routine:
        if Task == "Reading":
            text_SpeechTask_mid.alignText='left'
            text_SpeechTask_mid.color = (-1,-1,-1)
            SpeechTextHigh = ''
            SpeechTextLow = ''
            SpeechTextMid = SpeechText

        elif Task == "Vowel" or "RFF":
            SpeechTextHigh = SpeechText
            SpeechTextLow = SpeechText
            SpeechTextMid = SpeechText
            text_SpeechTask_mid.alignText='center'
            if RFF_rep == 1:
                text_SpeechTask_high.color = (-1,-1,-1)
                text_SpeechTask_mid.color = (.8,.8,.8)
                text_SpeechTask_low.color = (.8,.8,.8)
        #        text_ClickToContinue_4.text = ""
            elif RFF_rep == 2:
                text_SpeechTask_high.color = (.8,.8,.8)
                text_SpeechTask_mid.color = (-1,-1,-1)
                text_SpeechTask_low.color = (.8,.8,.8)
        #        text_ClickToContinue_4.text = ""
            elif RFF_rep == 3:
                text_SpeechTask_high.color = (.8,.8,.8)
                text_SpeechTask_mid.color = (.8,.8,.8)
                text_SpeechTask_low.color = (-1,-1,-1)
        #        text_ClickToContinue_4.text = ""

        isStop = 0
        #mic.start()
        t1 = time.time()-timeStart
      Each Frame:
        #mic.poll()

        if key_resp_SpeechTask.status == STARTED and not waitOnFlip:
            theseKeys = key_resp_SpeechTask.getKeys(keyList=['y','n','left','right','space','backspace'], waitRelease=False)
            if 'backspace' in theseKeys or 'left' in theseKeys:
                if RFF_rep == 1:
                    text_SpeechTask_high.color = (-1*text_SpeechTask_high.color[0],-1,-1)
                    text_SpeechTask_mid.color = (.8,.8,.8)
                    text_SpeechTask_low.color = (.8,.8,.8)
            #        text_ClickToContinue_4.text = ""
                elif RFF_rep == 2:
                    text_SpeechTask_high.color = (.8,.8,.8)
                    text_SpeechTask_mid.color = (-1*text_SpeechTask_mid.color[0],-1,-1)
                    text_SpeechTask_low.color = (.8,.8,.8)
            #        text_ClickToContinue_4.text = ""
                elif RFF_rep == 3:
                    text_SpeechTask_high.color = (.8,.8,.8)
                    text_SpeechTask_mid.color = (.8,.8,.8)
                    text_SpeechTask_low.color = (-1*text_SpeechTask_low.color[0],-1,-1)
                else:
                    text_SpeechTask_mid.color = (-1*text_SpeechTask_mid.color[0],-1,-1)
            else:
                if prepost == 'pre':
                    speech_trials_pre.finished = True
                if prepost == 'post':
                    speech_trials_post.finished = True
                _key_resp_SpeechTask_allKeys.extend(theseKeys)
                if len(_key_resp_SpeechTask_allKeys):
                    key_resp_SpeechTask.keys = _key_resp_SpeechTask_allKeys[-1].name  # just the last key pressed
                    key_resp_SpeechTask.rt = _key_resp_SpeechTask_allKeys[-1].rt
                    # a response ends the routine
        #            if isRFF < 2:
        #                continueRoutine = False
                    if isStop == 1:
                        time.sleep(1)
                        continueRoutine = False
                    else:
                        time.sleep(5)
                        text_SpeechTask_mid.alignText='center'
                        text_SpeechTask_mid.color = (-1,-1,-1)
                        SpeechTextHigh = ''
                        SpeechTextLow = ''
                        SpeechTextMid = 'STOP'
                        isStop = 1
      End Routine:
        t2 = time.time()-timeStart

        #mic.stop()
        #audioClip = mic.getRecording()

        if Task == "Vowel" or "RFF":
            trialName = WavName+'_'+str(RFF_rep)+'_'+prepost  # save the recorded audio as a 'wav' file
        else:
            trialName = WavName+'_'+prepost  # save the recorded audio as a 'wav' file

        # Load the CSV file
        with open(filename+'_segtimes.csv', mode='r') as file:
            reader = csv.reader(file)
            segData = [row for row in reader]

        new_row = [trialName, t1, t2]
        segData.append(new_row)

        # Save the modified data back to the CSV file
        with open(filename+'_segtimes.csv', mode='w', newline='') as file:
            writer = csv.writer(file)
            writer.writerows(segData)

        theseKeys = key_resp_SpeechTask.getKeys(keyList=['y','n','left','right','space','backspace'], waitRelease=False)
        if 'backspace' in theseKeys or 'left' in theseKeys:
            RepeatSS = True
            print('REPEAT')
        else:
            if prepost == 'pre':
                speech_trials_pre.finished = True
            if prepost == 'post':
                speech_trials_post.finished = True
    TextComponent text_SpeechTask_mid
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0
      text [set every frame] = $SpeechTextMid
      wrapWidth = 1.8
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    MouseComponent mouse_SpeechTask
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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    TextComponent text_ClickToContinue_4
      color = black
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 1
      text = Klicken Sie, um fortzufahren
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    TextComponent text_SpeechTask_high
      color = black
      letterHeight = 0.08
      pos = (-.33,.5)
      startVal [time (s)] = 0
      text [set every frame] = $SpeechTextHigh
      units = norm
      wrapWidth = 1.5
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    TextComponent text_SpeechTask_low
      color = black
      letterHeight = 0.08
      pos = (0.33, -.5)
      startVal [time (s)] = 0
      text [set every frame] = $SpeechTextLow
      units = norm
      wrapWidth = 1.5
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    KeyboardComponent key_resp_SpeechTask
      allowedKeys = 'y','n','left','right','space','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    VariableComponent SpeechTextLow
      startExpValue = ''
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    VariableComponent SpeechTextHigh
      startExpValue = ''
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    VariableComponent SpeechTextMid
      startExpValue = ''
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    VariableComponent prepost
      startExpValue = 'pre'
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  Routine SpeechIntro
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    CodeComponent code_10
      Code Type = Auto->JS
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      Before Experiment:
        TCTOpacity_SpeechIntro = 0
      Begin Experiment:
        sound_SpeechIntro = sound.Sound('A', secs=-1, stereo=True, hamming=True,
            name='sound_SpeechIntro',sampleRate = 44100)
      Begin Routine:
        if isIntro == 0:
            continueRoutine = False
      Each Frame:
        if sound_SpeechIntro.status == FINISHED:
            TCTOpacity_SpeechIntro = 1
    TextComponent text_SpeechIntro
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $SpeechIntroText
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    MouseComponent mouse_SpeechIntro
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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    TextComponent text_ClickToContinue_3
      color = black
      disabled = True
      letterHeight = 0.05
      opacity [set every frame] = $TCTOpacity_SpeechIntro
      pos = (0, -0.8)
      startVal [time (s)] = 1
      text = Klicken Sie, um fortzufahren
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    SoundComponent sound_SpeechIntro
      forceEndRoutine = False
      sound [set every repeat] = $"./sounds/"+IntroSound
      startVal [time (s)] = 0.5
      volume = Vol
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    KeyboardComponent key_resp_10
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Ready
  Routine Calibration
  Routine Ready2
  LoopInitiator trials_Intro1 loopType="TrialHandler"
    conditionsFile = PsychoPy/Intro1_pic.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'IntroText': 'Welcome to the study. Please click anywhere to continue.', 'IntroWav': 'Intro1A.wav'},
      {'IntroText': "In this study, you will narrate stories from a children's picture book.", 'IntroWav': 'Intro1B_pic.wav'},
      {'IntroText': 'First, here is an example.', 'IntroWav': 'Intro1C.wav'}]
    Routine Intro
  LoopTerminator trials_Intro1
  LoopInitiator trials_stimintro1 loopType="TrialHandler"
    conditionsFile = PsychoPy/Pics_Intro1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'picture_image_intro1': 'Pics/Frog01-z.png', 'sound_intro_1': 'Sound/PicIntroA.wav'},
      {'picture_image_intro1': 'Pics/Frog02-z.png', 'sound_intro_1': 'Sound/PicIntroB.wav'},
      {'picture_image_intro1': 'Pics/Frog03-z.png', 'sound_intro_1': 'Sound/PicIntroC.wav'}]
    Routine StimIntro1
  LoopTerminator trials_stimintro1
  Routine Practice
  LoopInitiator trials_stimintro2 loopType="TrialHandler"
    conditionsFile = PsychoPy/Pics_Intro2.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'picture_image_intro2': 'Pics/Frog04-z.png'},
      {'picture_image_intro2': 'Pics/Frog05-z.png'},
      {'picture_image_intro2': 'Pics/Frog06-z.png'}]
    Routine StimIntro2
  LoopTerminator trials_stimintro2
  LoopInitiator trials_Intro2 loopType="TrialHandler"
    conditionsFile = PsychoPy/Intro2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'IntroText': 'During the lectures there will be background noise. This noise will be loud but not harmful. Please ensure you are speaking loud enough to be understood through the noise. ', 'IntroWav': 'Intro2A.wav'},
      {'IntroText': 'You will rate your vocal effort associated with the lecture in the noise. ', 'IntroWav': 'Intro2B.wav'}]
    Routine Intro
  LoopTerminator trials_Intro2
  Routine BorgRating_Intro
  Routine BorgRating_Intro_2
  Routine NoiseTest
  Routine BorgRating
  Routine Begin
  LoopInitiator pre_loop loopType="TrialHandler"
    conditionsFile = prepost.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SpeechIntroText': 'Please read the following text.', 'SpeechText': 'When the sunlight strikes raindrops in the air, they act as a prism and form a rainbow. The rainbow is a division of white light into many beautiful colors. These take the shape of a long round arch, with its path high above, and its two ends apparently beyond the horizon. There is, according to legend, a boiling pot of gold at one end. People look, but no one ever finds it. When a man looks for something beyond his reach, his friends say he is looking for the pot of gold at the end of the rainbow.', 'IntroSound': 'READ.wav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,
      {'SpeechIntroText': 'Hier ist der erste Satz:\n\n„In der Auffahrt wächst nie viel Efeu.“\n\nBitte lesen Sie die folgenden Sätze.', 'SpeechText': 'afah', 'IntroSound': 'READ.wav', 'isIntro': 1.0, 'Task': 'RFF', 'RFF_rep': 1, 'WavName': 'RFF_a', 'RatingTF': 0},
      {'SpeechIntroText': 'Please read the following text.', 'SpeechText': 'afah', 'IntroSound': 'READ.wav', 'isIntro': 0.0, 'Task': 'RFF', 'RFF_rep': 2, 'WavName': 'RFF_a', 'RatingTF': 0},
      {'SpeechIntroText': 'Please read the following text.', 'SpeechText': 'afah', 'IntroSound': 'READ.wav', 'isIntro': 0.0, 'Task': 'RFF', 'RFF_rep': 3, 'WavName': 'RFF_a', 'RatingTF': 0}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
    Routine SpeechIntro
    LoopInitiator speech_trials_pre loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine SpeechTask
    LoopTerminator speech_trials_pre
    Routine BorgRating
  LoopTerminator pre_loop
  LoopInitiator trials_noise loopType="TrialHandler"
    conditionsFile = PsychoPy/VLT_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Noise': 'Babble', 'Level': 'High', 'Duration': 3},
      {'Noise': 'Babble', 'Level': 'High', 'Duration': 3},
      {'Noise': 'Babble', 'Level': 'High', 'Duration': 3},
      {'Noise': 'Babble', 'Level': 'High', 'Duration': 3},
      {'Noise': 'Babble', 'Level': 'High', 'Duration': 3}]
    Routine VLT_init
    LoopInitiator VLT_stim loopType="TrialHandler"
      Selected rows = $pages
      conditionsFile = PsychoPy/Pics_all.xlsx
      loopType = sequential
      nReps = 99
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      conditions:
        [{'picture_image': 'Pics/Frog01.png'},
        {'picture_image': 'Pics/Frog02.png'},
        {'picture_image': 'Pics/Frog03.png'},
        {'picture_image': 'Pics/Frog04.png'},
        {'picture_image': 'Pics/Frog05.png'},
        {'picture_image': 'Pics/Frog06.png'},
        {'picture_image': 'Pics/Frog07.png'},
        {'picture_image': 'Pics/Frog08.png'},
        {'picture_image': 'Pics/Frog09.png'},
        {'picture_image': 'Pics/Frog10.png'},
        {'picture_image': 'Pics/Frog11.png'},
        {'picture_image': 'Pics/Frog12.png'},
        {'picture_image': 'Pics/Frog13.png'},
        {'picture_image': 'Pics/Frog14.png'},
        {'picture_image': 'Pics/Frog15.png'}]
      Routine STIMULI
    LoopTerminator VLT_stim
    Routine BorgRating
  LoopTerminator trials_noise
  LoopInitiator trials_TLX loopType="TrialHandler"
    conditionsFile = PsychoPy/TLX.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'TLX_Title': 'Mental Demand', 'TLX_Description': 'How much mental and perceptual activity was required (e.g. thinking, deciding, calculating, remembering, looking, searching, etc.)? Was the task easy or demanding, simple or complex, exacting or forgiving?', 'TLX_Label_Num': 1},
      {'TLX_Title': 'Physical Demand', 'TLX_Description': ' much physical activity was required (e.g. pushing, pulling, turning, controlling, activating, etc.)? Was the task easy or demanding, slow or brisk, slack or strenuous, restful or laborious?', 'TLX_Label_Num': 1},
      {'TLX_Title': 'Temporal Demand', 'TLX_Description': 'How much time pressure did you feel due to the rate or pace at which the tasks or task elements occurred? Was the pace slow and leisurely or rapid and frantic?', 'TLX_Label_Num': 1},
      {'TLX_Title': 'Performance', 'TLX_Description': 'How successful do you think you were in accomplishing the goals of the task set by the experimenter (or yourself)? How satisfied were you with your performance in accomplishing these goals?', 'TLX_Label_Num': 2},
      {'TLX_Title': 'Effort', 'TLX_Description': 'How hard did you have to work (mentally and physically) to accomplish your level of performance?', 'TLX_Label_Num': 1},
      {'TLX_Title': 'Frustration Level', 'TLX_Description': 'How insecure, discouraged, irritated, stressed and annoyed versus secure, gratified, content, relaxed and complacent did you feel during the task?', 'TLX_Label_Num': 1}]
    Routine TLX
  LoopTerminator trials_TLX
  Routine BorgRating
  Routine End
