PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': "['1','2']", 'experimenter': '', 'record': 'True', 'skip_sync': 'False', 'reset_audio': 'False', 'date|hid': '', 'expName|hid': '', 'expVersion|hid': '', 'psychopyVersion|hid': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = VLT_v5
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine TLX
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    VariableComponent TLX_Labelstr
      startExpValue = 'Very\nLow','','','','','','','','','','Very\nHigh'
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    CodeComponent code_TLX
      Code Type = Auto->JS
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      Begin Experiment:
        TLX_num = 0
      Begin Routine:
        sd.stop()

        if TLX_Label_Num == 1:
            TLX_Labelstr = 'Very\nLow','','','','','','','','','','Very\nHigh'
        elif TLX_Label_Num == 2:
            TLX_Labelstr = 'Very\nGood','','','','','','','','','','Very\nPoor'
      End Routine:
        # Load the CSV file
        with open(filename+'_Ratings.csv', mode='r') as file:
            reader = csv.reader(file)
            segData = [row for row in reader]
        TLX_num += 1
        new_row = ['TLC_'+TLX_Title+'_'+str(TLX_num), slider_TLX.getRating()]
        segData.append(new_row)

        # Save the modified data back to the CSV file
        with open(filename+'_Ratings.csv', mode='w', newline='') as file:
            writer = csv.writer(file)
            writer.writerows(segData)
    TextComponent text_TLXTitle
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.5
      text [set every repeat] = $TLX_Title
      units = norm
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    TextComponent text_TLXDescription
      letterHeight = 0.06
      pos = (0, 0.1)
      startVal [time (s)] = 0.5
      text [set every repeat] = $TLX_Description
      units = norm
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    SliderComponent slider_TLX
      forceEndRoutine = False
      granularity = 1
      initVal = 6
      labels = TLX_Labelstr
      letterHeight = 0.05
      pos = (0, -.3)
      size = (1.5, 0.1)
      startVal [time (s)] = 0.5
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11)
      units = norm
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    ButtonComponent button_TLX
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -.7)
      size = (0.4, 0.2)
      startVal [time (s)] = 0.5
      text = ENTER
      units = norm
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  Routine Intro
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    VariableComponent CTC_Opac
      startExpValue = -1
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    CodeComponent code_Intro
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/'+IntroWav
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(Vol*trialdata, samplerate=trialfs, device=speakerDev)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            CTC_Opac = -1
        elif not playing:
            CTC_Opac = 1
      End Routine:
        sd.stop()
    TextComponent text_Intro
      letterHeight = 0.07
      startVal [time (s)] = 0.5
      text [set every repeat] = $IntroText
      units = norm
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    MouseComponent mouse_Intro
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_Intro
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_CTC_Intro
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0, -0.7)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere to continue~~
      units = norm
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
  Routine BorgRating
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    VariableComponent inputText
      startExpValue = '#'
      startRoutineValue = '#'
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    KeyboardComponent VER_key_resp
      allowedKeys = 'return','y','n','left','right','space','1','2','3','4','5','6','7','8','9','0','period','return','backspace','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0','num_decimal','num_subtract','period','comma'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_Borg
      Code Type = Auto->JS
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      Begin Experiment:
        BorgIter = -1

        NumResponse = ''

        VER_num = 0
      Begin Routine:
        #sd.stop()

        theseKeys=""
        VER_num_text.alignHoriz ='left'
        first_press = True
      Each Frame:
        if mouse_Borg.isPressedIn(polygon_1):
            NumResponse = '1'
        if mouse_Borg.isPressedIn(polygon_2):
            NumResponse = '2'
        if mouse_Borg.isPressedIn(polygon_3):
            NumResponse = '3'
        if mouse_Borg.isPressedIn(polygon_4):
            NumResponse = '4'
        if mouse_Borg.isPressedIn(polygon_5):
            NumResponse = '5'
        if mouse_Borg.isPressedIn(polygon_6):
            NumResponse = '6'
        if mouse_Borg.isPressedIn(polygon_7):
            NumResponse = '7'
        if mouse_Borg.isPressedIn(polygon_8):
            NumResponse = '8'
        if mouse_Borg.isPressedIn(polygon_9):
            NumResponse = '9'
        if mouse_Borg.isPressedIn(polygon_0):
            NumResponse = '0'
        if mouse_Borg.isPressedIn(polygon_Dot):
            NumResponse = ''
            if len(inputText) == 0:
                inputText += '0.'
            else:
                inputText += '.'
            time.sleep(.1)

        if NumResponse != '':
            if inputText == '#':
                inputText = NumResponse
            else:
                inputText += NumResponse
            NumResponse = ''
            time.sleep(.1)

        if mouse_Borg.isPressedIn(polygon_Back):
            inputText = inputText[:-1]  # lose the final character
            time.sleep(.1)

        if len(_VER_key_resp_allKeys) and keyReady:
            keyReady = False
            VER_key_resp.keys = _VER_key_resp_allKeys[-1].name  # just the last key pressed
            VER_key_resp.rt = _VER_key_resp_allKeys[-1].rt
            if first_press:
                inputText = ''
                first_press = False

            elif VER_key_resp.keys in ['right','space']:
                continueRoutine = False

            elif VER_key_resp.keys in ['num_1', '1']:
                inputText += '1'

            elif VER_key_resp.keys in ['num_2', '2']:
                inputText += '2'

            elif VER_key_resp.keys in ['num_3', '3']:
                inputText += '3'

            elif VER_key_resp.keys in ['num_4', '4']:
                inputText += '4'

            elif VER_key_resp.keys in ['num_5', '5']:
                inputText += '5'

            elif VER_key_resp.keys in ['num_6', '6']:
                inputText += '6'

            elif VER_key_resp.keys in ['num_7', '7']:
                inputText += '7'

            elif VER_key_resp.keys in ['num_8', '8']:
                inputText += '8'

            elif VER_key_resp.keys in ['num_9', '9']:
                inputText += '9'

            elif VER_key_resp.keys in ['num_0', '0']:
                inputText += '0'

            elif VER_key_resp.keys in ['period', 'comma','num_decimal']:
                if len(inputText) == 0:
                    inputText += '0,'
                else:
                    inputText += '.'

            elif VER_key_resp.keys in ['backspace','num_subtract']:
                inputText = inputText[:-1]  # lose the final character

            #VER_key_resp = []
            _VER_key_resp_allKeys = []
            theseKeys = []
        elif len(_VER_key_resp_allKeys) == 0:
            keyReady = True
      End Routine:
        #sd.stop()

        # Load the CSV file
        with open(filename+'_Ratings.csv', mode='r') as file:
            reader = csv.reader(file)
            segData = [row for row in reader]

        VER_num += 1

        new_row = ['VER_'+str(VER_num), inputText]
        segData.append(new_row)

        # Save the modified data back to the CSV file
        with open(filename+'_Ratings.csv', mode='w', newline='') as file:
            writer = csv.writer(file)
            writer.writerows(segData)


        # let's store the final text string into the results finle...
        thisExp.addData('VER', inputText)
        inputText="#"
        thisExp.addData('Task','VER')
    ImageComponent image_BorgScale
      image = PsychoPy/borg_cr100.png
      pos = (-0.5, 0)
      size = (0.8,1.9)
      startVal [time (s)] = 0.5
      texture resolution = 512
      units = norm
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    TextComponent text_BorgScale
      letterHeight = 0.06
      pos = (0.5, 0.6)
      startVal [time (s)] = 0.5
      text = Please rate your vocal effort level by typing the value.
      units = norm
      wrapWidth = 0.8
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    TextComponent VER_num_text
      letterHeight = 0.125
      pos = (0.5, .25)
      startVal [time (s)] = 0.5
      text [set every frame] = $inputText
      units = norm
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    MouseComponent mouse_Borg
      forceEndRoutineOnPress = never
      saveMouseState = on click
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    ButtonComponent button_Borg
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.5, -.8)
      size = (0.3, .15)
      startVal [time (s)] = 0.5
      text = ENTER
      units = norm
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      callback:
        if inputText != '' and inputText != '#':
            continueRoutine = False
            break
    PolygonComponent polygon_1
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.4, -0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_2
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.5, -0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_3
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.6, -0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_4
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.4, -0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_5
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.5, -0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_6
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.6, -0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_7
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_8
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.5, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_9
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.6, -0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_Back
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.4, -0.4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_0
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.5, -0.4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    PolygonComponent polygon_Dot
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (0.6, -0.4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    TextComponent text_1
      color = black
      letterHeight = 0.06
      pos = (0.4, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 1
      units = norm
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    TextComponent text_2
      color = black
      letterHeight = 0.06
      pos = (0.5, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 2
      units = norm
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    TextComponent text_3
      color = black
      letterHeight = 0.06
      pos = (0.6, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 3
      units = norm
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    TextComponent text_4
      color = black
      letterHeight = 0.06
      pos = (0.4, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 4
      units = norm
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    TextComponent text_5
      color = black
      letterHeight = 0.06
      pos = (0.5, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 5
      units = norm
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    TextComponent text_6
      color = black
      letterHeight = 0.06
      pos = (0.6, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 6
      units = norm
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    TextComponent text_7
      color = black
      letterHeight = 0.06
      pos = (0.4, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 7
      units = norm
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    TextComponent text_8
      color = black
      letterHeight = 0.06
      pos = (0.5, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 8
      units = norm
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    TextComponent text_9
      color = black
      letterHeight = 0.06
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 9
      units = norm
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    TextComponent text_Back
      color = black
      letterHeight = 0.06
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = <—
      units = norm
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    TextComponent text_0
      color = black
      letterHeight = 0.06
      pos = (0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = 0
      units = norm
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    TextComponent text_Dot
      color = black
      letterHeight = 0.06
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = .
      units = norm
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  Routine BorgRating_Intro
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    CodeComponent code_BorgRating_Intro
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/'+ BorgWav
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(Vol*trialdata, samplerate=trialfs, device=speakerDev)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            CTC_Opac = -1
        elif not playing:
            CTC_Opac = 1
      End Routine:
        sd.stop()
    KeyboardComponent VER_key_resp_2
      allowedKeys = 'return','y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_BorgScale_Intro
      image = PsychoPy/borg_cr100.png
      pos = (-0.5, 0)
      size = (0.8,1.9)
      startVal [time (s)] = 0.5
      texture resolution = 512
      units = norm
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    TextComponent text_BorgScale_Intro
      letterHeight = 0.06
      pos = (0.5, 0)
      startVal [time (s)] = 0.5
      text [set every repeat] = $BorgText
      units = norm
      wrapWidth = 0.8
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    MouseComponent mouse_BorgRating_Intro
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1
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    TextComponent text_CTC_BorgRating_Intro
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0.3, -0.7)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere to continue~~
      units = norm
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  Routine NoiseTest
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    CodeComponent code_Noise
      Code Type = Auto->JS
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      Before Experiment:
        import soundfile as sf
      Begin Experiment:
        noise_filename = './Noise/noise_2.wav'
        noisedata, noisefs = sf.read(noise_filename, dtype='float32')
      Begin Routine:
        sd.play(noisedata, samplerate=noisefs, device=noiseDev)
        CTC_Opac = 1
      End Routine:
        sd.stop()
        CTC_Opac = -1
    TextComponent text_NoiseTest
      letterHeight = 0.07
      startVal [time (s)] = 0.5
      units = norm
      wrapWidth = 1.5
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      text:
        Speak the names of the months of the year:

        January, February, March, April, May, June, July, August, September, October, November, December
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_NoiseTest
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1
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    TextComponent text_CTC_NoiseTest
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0, -0.7)
      startVal [time (s)] = 0.5
      text = ~~When finished, click anywhere to continue~~
      units = norm
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  Routine Begin
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    CodeComponent code_Begin
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/'+ BeginWav
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(Vol*trialdata, samplerate=trialfs, device=speakerDev)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            CTC_Opac = -1
        elif not playing:
            CTC_Opac = 1
      End Routine:
        sd.stop()

        block += 1
    TextComponent text_Begin
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      text = Any questions before you begin?
      units = norm
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    KeyboardComponent key_resp_Begin
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_Begin
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = .5
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
  Routine End
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    CodeComponent code_End
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/End.wav'
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(Vol*trialdata, samplerate=trialfs, device=speakerDev)
      End Routine:
        sd.stop()
    TextComponent text_End
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      text = Thank you for your participation.
      units = norm
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    KeyboardComponent key_resp_End
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine Practice
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    CodeComponent code_Practice
      Code Type = Auto->JS
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      Begin Routine:
        trial_filename = './Sounds/'+PracticeWav
        trialdata, trialfs = sf.read(trial_filename, dtype='float32')

        sd.play(Vol*trialdata, samplerate=trialfs, device=speakerDev)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            CTC_Opac = -1
        elif not playing:
            CTC_Opac = 1
      End Routine:
        sd.stop()
    TextComponent text_Practice
      letterHeight = 0.07
      startVal [time (s)] = 0.5
      text [set every repeat] = $PracticeText
      units = norm
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    MouseComponent mouse_Practice
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_Practice
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_CTC_Practice
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0, -0.7)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere to continue~~
      units = norm
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
  Routine REST
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    VariableComponent t_total
      startExpValue = 1800
      stopVal [duration (s)] = 1800
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    VariableComponent rest_t
      startExpValue = 0
      stopVal [duration (s)] = t_total
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    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_total
      text = Please rest. [30 minutes]
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    ProgressComponent prog_5
      anchor = center-left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-.5, -0.4)
      progress [set every frame] = rest_t
      size = (1, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = t_total
      units = norm
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        rest_t =0
      Each Frame:
        rest_t = t/t_total
      End Routine:
        block += 1
    KeyboardComponent key_resp_5
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_total
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
  Routine VLT_init
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    VariableComponent pagenum
      startExpValue = 0
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    CodeComponent code_VLT_init
      Code Type = Auto->JS
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      Before Experiment:
        pagelen = len(data.importConditions('PsychoPy/Pics_all.xlsx'))
        pages = list(range(0,pagelen))
      Begin Experiment:
        VLT_started = False
      Begin Routine:
        pages = slice(pagenum, pagelen)

        if not VLT_started:
            block += 1
            VLT_started = True
      End Routine:
        vltSegStart = time.time()
  Routine STIMULI
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    KeyboardComponent STIM_quit
      allowedKeys = 'q'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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    VariableComponent STIM_text
      startExpValue = ""
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    CodeComponent STIM_code
      Code Type = Py
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      Before Experiment:
        import pandas as pd
      Begin Experiment:
        NOISE_RAMP_S = 10.0

        def make_ramp(d, sr):
            n = int(sr * NOISE_RAMP_S)
            r = (0.5 * (1 - np.cos(np.pi * np.linspace(0, 1, n)))).astype('float32')
            head = d[:n].copy()
            if head.ndim > 1:
                head *= r[:, None]
            else:
                head *= r
            return head

        noise_high_filename = './Noise/Babble_Low.wav'
        noise_low_filename = './Noise/Babble_Low.wav'
        NHdata, NHfs = sf.read(noise_high_filename, dtype='float32')
        NLdata, NLfs = sf.read(noise_low_filename, dtype='float32')

        NHramp = make_ramp(NHdata, NHfs)
        NLramp = make_ramp(NLdata, NLfs)

        previousLevel = None
      Begin Routine:
        if Level != previousLevel:
            sd.stop()
            if Level == 'Low':
                if previousLevel is None:
                    sd.play(NLramp, samplerate=NLfs)
                    sd.wait()
                sd.play(NLdata, samplerate=NLfs, loop=True)
            elif Level == 'High':
                if previousLevel is None:
                    sd.play(NHramp, samplerate=NHfs)
                    sd.wait()
                sd.play(NHdata, samplerate=NHfs, loop=True)
            previousLevel = Level
      Each Frame:
        if len(_STIM_quit_allKeys) > 0:
            del _STIM_quit_allKeys[:]
            VLT_stim.finished = True
            trials_noise.finished = True
            continueRoutine = False


        if time.time() - vltSegStart > Duration:
            VLT_stim.finished = True
            continueRoutine = False
            pagenum -= 1
      End Routine:
        pagenum += 1

        if pagenum > pagelen:
            pagenum = 0
    KeyboardComponent STIM_key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent STIM_image
      image [set every repeat] = $picture_image
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent STIM_mouse
      clickable = STIM_advance
      correctAns = 'STIM_advance'
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 1
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    PolygonComponent STIM_advance
      fillColor = white
      lineColor = -1.0000, 1.0000, -1.0000
      ori = 90
      pos = (.8, -.8)
      saveStartStop = False
      shape = arrow
      size = (0.1, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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  Routine StimIntro1
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    CodeComponent code_StimIntro1
      Code Type = Auto->JS
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      Begin Routine:
        trialdata, trialfs = sf.read(PicWav, dtype='float32')
        sd.play(Vol*trialdata, samplerate=trialfs, device=speakerDev)
      Each Frame:
        playing = sd.get_stream().active

        if playing:
            #CTC_Opac = -1
            pass
        elif not playing:
            #CTC_Opac = 1
            time.sleep(0.25)
            continueRoutine = False
      End Routine:
        sd.stop()
    MouseComponent mouse_StimIntro1
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_StimIntro1
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_CTC_StimIntro1
      letterHeight = 0.05
      opacity [set every frame] = CTC_Opac
      pos = (0, -0.7)
      startVal [time (s)] = 0.5
      text = ~~Click anywhere to continue~~
      units = norm
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    ImageComponent StimIntro1_image
      image [set every repeat] = $picture_image_intro1
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine StimIntro2
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    MouseComponent mouse_StimIntro2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_StimIntro2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent StimIntro2_image
      image [set every repeat] = $picture_image_intro2
      size = (2,2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine Ready
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    VariableComponent Vol
      startExpValue = 0.5
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    CodeComponent code_ready
      Code Type = Auto->JS
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      Before Experiment:
        import time
        import csv
        import os
        import numpy as np
        from datetime import date
        import sounddevice as sd
        import json

        # Builder does this later at line ~476, but Before Experiment runs at import,
        # so relative paths need it now. Idempotent.
        os.chdir(os.path.dirname(os.path.abspath(__file__)))

        VLT_SYNC_NONE = '-- none (DEBUG: no sync device on this machine) --'


        def vlt_output_devices():
            apis = sd.query_hostapis()
            return [(i, d['name'], apis[d['hostapi']]['name'], d['max_output_channels'])
                    for i, d in enumerate(sd.query_devices())
                    if d['max_output_channels'] > 0]


        def vlt_find_device(name, hostapi):
            """Name + host API -> the index sd.play(device=) wants. Pinning by name
            survives re-enumeration; pinning by index does not. Host API is part of
            the key because on Windows one device appears under MME, WASAPI and
            DirectSound under the same name."""
            m = [e for e in vlt_output_devices() if e[1] == name and e[2] == hostapi]
            if not m:
                raise RuntimeError(
                    'Audio device not found:\n\n    "%s"  [%s]\n\n'
                    'It is not connected, or it has been renamed.\n'
                    'Tick reset_audio to reconfigure.' % (name, hostapi))
            if len(m) > 1:
                raise RuntimeError('Device name is ambiguous: "%s" [%s]' % (name, hostapi))
            return m[0][0]


        def vlt_make_config():
            devs = vlt_output_devices()
            if not devs:
                raise RuntimeError('No audio output devices found.')
            labels = ['%s [%s] (%d ch)' % (d[1], d[2], d[3]) for d in devs]
            dlg = gui.Dlg(title='Audio routing')
            dlg.addField('NOISE  (calibrated: babble, VLT noise):', choices=labels)
            dlg.addField('SPEAKER  (uncalibrated: spoken instructions):', choices=labels)
            dlg.addField('SYNC  (tone to the recorder):', choices=[VLT_SYNC_NONE] + labels)
            ans = dlg.show()
            if not dlg.OK:
                core.quit()

            def pick(lbl):
                d = devs[labels.index(lbl)]
                return {'name': d[1], 'hostapi': d[2]}

            cfg = {'created': time.strftime('%Y-%m-%dT%H:%M:%S'),
                   'devices': {'noise': pick(ans[0]),
                               'speaker': pick(ans[1]),
                               'sync': None if ans[2] == VLT_SYNC_NONE else pick(ans[2])},
                   'sync_tone': {'f0_hz': 500.0, 'f1_hz': 4000.0,
                                 'duration_s': 0.1, 'amplitude': 0.7}}
            with open('vlt_config.json', 'w') as f:
                json.dump(cfg, f, indent=2)
            return cfg


        def vdc_load_pages(path):
            """Blank line ends a page. Lines within a page are joined, so hard
            wrapping in the source file does not affect the display."""
            pages, buf = [], []
            with open(path, encoding='utf-8-sig') as f:
                for raw in f:
                    line = raw.strip()
                    if line.startswith('#'):
                        continue
                    if not line:
                        if buf:
                            pages.append(' '.join(buf))
                            buf = []
                    else:
                        buf.append(line)
            if buf:
                pages.append(' '.join(buf))
            if not pages:
                raise RuntimeError('No pages found in ' + path)
            return pages


        if os.path.exists('vlt_config.json'):
            with open('vlt_config.json') as _f:
                vlt_cfg = json.load(_f)
        else:
            vlt_cfg = vlt_make_config()

        vdc_pages = vdc_load_pages('PsychoPy/vdc_passage.txt')
      Begin Experiment:
        global vlt_cfg

        #fs = 44100
        #times = np.linspace(0, 0.1, fs, endpoint=True)
        #beep = 0.7*np.sin(2 * np.pi * 440 * times)

        today = date.today()
        filename = _thisDir + os.sep + u'data/%s_%s_%s' % (expName, expInfo['participant'],today.strftime('%Y-%m-%d'))
        wavfilename = _thisDir + os.sep + u'data/%s_%s_%s' % (expName, expInfo['participant'],today.strftime('%Y-%m-%d'))+ os.sep + u'data/%s_%s' % (expName, expInfo['participant'])

        record_TF = str(expInfo['record']).lower() in ('true', '1', 'yes')
        if not record_TF:
            CT_opac = 1

        timeStart = time.time();
        #readable_time = time.strftime('%Y-%m-%d %H:%M:%S', time.localtime(timeStart))

        # Construct the file path
        file_path = filename + "_segtimes.csv"
        ver_path = filename + "_ver.csv"

        # Check if the file exists
        if not os.path.exists(file_path):
            with open(filename+'_segtimes.csv', mode='w', newline='') as file:
                writer = csv.writer(file)
                writer.writerow(['Trial', 'T1', 'T2'])

        # Check if the file exists
        if not os.path.exists(ver_path):
            with open(filename+'_Ratings.csv', mode='w', newline='') as file:
                writer = csv.writer(file)
                writer.writerow(['Trial', 'Rating'])

        # syncDev = 'Speakers (Cable Creation), Windows DirectSound'

        # reset_audio lives in expInfo, which does not exist in Before Experiment,
        # so the re-run happens here -- the dialog renders over the window. Setup
        # only, not something to tick mid-study.
        if str(expInfo.get('reset_audio', False)).lower() in ('true', '1', 'yes'):
            vlt_cfg = vlt_make_config()

        vlt_skip_sync = (str(expInfo.get('skip_sync', False)).lower() in ('true', '1', 'yes') or vlt_cfg['devices'].get('sync') is None)

        _dn = vlt_cfg['devices']
        noiseDev   = vlt_find_device(_dn['noise']['name'],   _dn['noise']['hostapi'])
        speakerDev = vlt_find_device(_dn['speaker']['name'], _dn['speaker']['hostapi'])
        syncDev    = (None if vlt_skip_sync else
                      vlt_find_device(_dn['sync']['name'], _dn['sync']['hostapi']))
        if vlt_skip_sync:
            print('*** SYNC OFF -- no tones will be recorded ***')

        # sync tone: 100 ms linear sweep 500 -> 4000 Hz, 5 ms cosine edges
        _st = vlt_cfg['sync_tone']
        sync_fs = 44100
        _n = int(round(sync_fs * _st['duration_s']))
        _t = np.arange(_n) / float(sync_fs)
        _k = (_st['f1_hz'] - _st['f0_hz']) / _st['duration_s']
        _w = np.ones(_n)
        _e = max(1, int(sync_fs * 0.005))
        _w[:_e] = np.linspace(0, 1, _e)
        _w[-_e:] = np.linspace(1, 0, _e)
        sync_chirp = (_st['amplitude'] * np.sin(2 * np.pi * (_st['f0_hz'] * _t + 0.5 * _k * _t * _t)) * _w).astype('float32')


        def sync_tone():
            """Fire the sync tone and block until it finishes, so the next sd.play()
            cannot cut it short. Returns its time on the segtimes clock, or ''."""
            if syncDev is None:
                return ''
            _tt = time.time() - timeStart
            sd.play(sync_chirp, samplerate=sync_fs, device=syncDev)
            sd.wait()
            return _tt


        def sync_seg(name, t1, t2):
            """Append a row to _segtimes.csv in your existing [Trial, T1, T2] format."""
            with open(filename + '_segtimes.csv', mode='r') as f:
                rows = [r for r in csv.reader(f)]
            rows.append([name, t1, t2])
            with open(filename + '_segtimes.csv', mode='w', newline='') as f:
                csv.writer(f).writerows(rows)


        # noise ladder, pre-loaded so no trial pays disk I/O at onset
        vdc_buffers = {}
        for _fn in sorted(os.listdir('VDC_NOISE')):
            if _fn.lower().endswith('.wav'):
                _d, _sr = sf.read(os.path.join('VDC_NOISE', _fn), dtype='float32', always_2d=True)
                vdc_buffers[_fn] = (_d, _sr)

        vdc_idx = 0     # read position through vdc_pages
        block = 0       # VDC block counter -> B1, B2, B3 ...
      End Routine:
        with open(filename+'_segtimes.csv', mode='r') as file:
            reader = csv.reader(file)
            segData = [row for row in reader]
        timeStart = time.time();

        #sd.play(beep, samplerate=fs, device=syncDev)
        sync_seg('Beep', sync_tone(), 0)

        # Save the modified data back to the CSV file
        with open(filename+'_segtimes.csv', mode='w', newline='') as file:
            writer = csv.writer(file)
            writer.writerows(segData)

        time.sleep(1.0)
    TextComponent text_ready
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Ready for microphone calibration.
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    KeyboardComponent key_resp_ready
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_TEMP
      clickable = GO
      correctAns = 'GO'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent GO
      fillColor = -0.5294, 0.4039, -0.1137
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0.8, -0.8)
      shape = circle
      size = (0.12, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine Ready2
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text = Ready to begin.
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Calibration
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    VariableComponent StepText
      startExpValue = ''
      startRoutineValue = 'Step 1: Place the calibrator on the desk microphone.'
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    VariableComponent prog_Cal_Val
      startExpValue = 0
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    VariableComponent Done1
      startExpValue = False
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    VariableComponent Done2
      startExpValue = False
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    TextComponent text_Cal
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.5
      text = First, we will calibrate the microphones. Please wait.
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    TextComponent text_Cal_Step
      color = black
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0.5
      text [set every frame] = $StepText
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent button_Cal1
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.25, -0.1)
      size = (0.2, .1)
      startVal [time (s)] = 0.5
      text = Step 1
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      callback:
        prog_Cal_Val = 0
        cal1t1 = time.time()-timeStart
        Cal1 = True
    ButtonComponent button_Cal2
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.2, .1)
      startVal [time (s)] = 0.5
      text = Step 2
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      callback:
        if Done1:
            prog_Cal_Val = 0
            cal2t1 = time.time()-timeStart
            Cal2 = True
    ButtonComponent button_Cal3
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.25, -0.1)
      size = (0.2, .1)
      startVal [time (s)] = 0.5
      text = Done!
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      callback:
        if Done1 and Done2:
            continueRoutine = False
            break
    ProgressComponent prog_Cal
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (0, -.6)
      progress [set every frame] = prog_Cal_Val
      size = (1, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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    CodeComponent code_Cal
      Code Type = Auto->JS
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      Begin Experiment:
        Cal1 = False
        Cal2 = False
      Each Frame:
        if Done1 and not Done2:
            StepText = 'Step 2: At 50 cm, have the participant say a strong "ah" for 5 seconds.'

        if Done1 and Done2:
            StepText = 'Press Done!'

        if Cal1:
            dt = (time.time()-timeStart)-cal1t1
            prog_Cal_Val = dt/3

        if Cal1 and (time.time()-timeStart)-cal1t1 > 3:
            Cal1 = False
            cal1t2 = time.time()-timeStart

            with open(filename+'_segtimes.csv', mode='r') as file:
                reader = csv.reader(file)
                segData = [row for row in reader]

            new_row = ['Cal1', cal1t1, cal1t2]
            segData.append(new_row)

            # Save the modified data back to the CSV file
            with open(filename+'_segtimes.csv', mode='w', newline='') as file:
                writer = csv.writer(file)
                writer.writerows(segData)

            Done1 = True

        if Cal2:
            dt = (time.time()-timeStart)-cal2t1
            prog_Cal_Val = dt/3

        if Cal2 and (time.time()-timeStart)-cal2t1 > 3:
            Cal2 = False
            cal2t2 = time.time()-timeStart

            with open(filename+'_segtimes.csv', mode='r') as file:
                reader = csv.reader(file)
                segData = [row for row in reader]

            new_row = ['Cal2', cal2t1, cal2t2]
            segData.append(new_row)

            # Save the modified data back to the CSV file
            with open(filename+'_segtimes.csv', mode='w', newline='') as file:
                writer = csv.writer(file)
                writer.writerows(segData)

            Done2 = True
  Routine SpeechTask
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    CodeComponent code_SpeechTask
      Code Type = Py
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      Begin Experiment:
        CLR_ON      = (1, 1, 1)
        CLR_OFF     = (0.35, 0.35, 0.35)
        CLR_RETAKE  = (1, -1, -1)

        TASK_REPS   = {'Speech': 1, 'Vowel': 3};
        DEBOUNCE    = 0.3
        RETAKE_FLASH = 0.4

        #SpeechMat = ''
      Begin Routine:
        #global SpeechMat

        _lines = [text_SpeechTask_high, text_SpeechTask_mid, text_SpeechTask_low]

        nrep = TASK_REPS.get(Task)
        if nrep is None:
            raise ValueError('Unknown Task "%s" -- expected one of %s'
                             % (Task, list(TASK_REPS)))
        if not (1 <= Rep <= nrep):
            raise ValueError('Rep %s is out of range for Task "%s" (1..%d)'
                             % (Rep, Task, nrep))

        for _ln in _lines:
            _ln.alignText = 'center'

        if nrep == 1:
            text_SpeechTask_mid.setText(SpeechMat)
            text_SpeechTask_high.setText('')
            text_SpeechTask_low.setText('')
            text_SpeechTask_mid.color = CLR_ON
        else:
            for _ln in _lines:
                _ln.setText(SpeechMat)
            for _i, _ln in enumerate(_lines, start=1):
                _ln.color = CLR_ON if _i == Rep else CLR_OFF

        isStop = 0
        retake = False
        lockUntil = 0
        endAt = None
        speech_tone_t = sync_tone()
        t1 = time.time() - timeStart
      Each Frame:
        #mic.poll()
        if endAt is not None and t >= endAt:
            continueRoutine = False

        elif t < lockUntil:
            # swallow anything arriving during the lockout, so a held key can't
            # queue up and fire the instant the lockout expires
            del _key_resp_SpeechTask_allKeys[:]

        elif len(_key_resp_SpeechTask_allKeys):
            _names = [k.name for k in _key_resp_SpeechTask_allKeys]
            key_resp_SpeechTask.keys = _names[-1]
            key_resp_SpeechTask.rt = _key_resp_SpeechTask_allKeys[-1].rt
            del _key_resp_SpeechTask_allKeys[:]
            lockUntil = t + DEBOUNCE

            if 'left' in _names or 'backspace' in _names:
                retake = True
                if nrep == 1:
                    text_SpeechTask_mid.color = CLR_RETAKE
                else:
                    for _i, _ln in enumerate(_lines, start=1):
                        _ln.color = CLR_RETAKE if _i == Rep else CLR_OFF
                endAt = t + RETAKE_FLASH

            elif isStop == 1:
                retake = False
                continueRoutine = False

            else:
                retake = False
                #SpeechMat = 'STOP'
                text_SpeechTask_high.setText('')
                text_SpeechTask_low.setText('')
                text_SpeechTask_mid.setText('STOP')
                text_SpeechTask_mid.color = CLR_ON
                isStop = 1
      End Routine:
        t2 = time.time() - timeStart
        prepost = 'B%d' % block

        if nrep > 1:
            trialName = '%s_%d_%s' % (TaskName, Rep, prepost)
        else:
            trialName = '%s_%s' % (TaskName, prepost)

        attempt = currentLoop.thisN + 1
        if attempt > 1:
            trialName = '%s_take%d' % (trialName, attempt)

        sync_seg('Tone_' + trialName, speech_tone_t, 0)
        sync_seg(trialName, t1, t2)

        if not retake:
            currentLoop.finished = True

        thisExp.addData('SpeechTask.trialName', trialName)
        thisExp.addData('SpeechTask.attempt', attempt)
        thisExp.addData('SpeechTask.retake', retake)
    TextComponent text_SpeechTask_mid
      letterHeight = 0.1
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.8
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    MouseComponent mouse_SpeechTask
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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    TextComponent text_ClickToContinue_4
      color = black
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 1
      text = Klicken Sie, um fortzufahren
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    TextComponent text_SpeechTask_high
      color = black
      letterHeight = 0.1
      pos = (-.33,.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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    TextComponent text_SpeechTask_low
      color = black
      letterHeight = 0.1
      pos = (0.33, -.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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    KeyboardComponent key_resp_SpeechTask
      allowedKeys = 'y','n','left','right','space','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    VariableComponent prepost
      startExpValue = 'pre'
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  Routine SpeechIntro
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    CodeComponent code_SpeechIntro
      Code Type = Auto->JS
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      Before Experiment:
        TCTOpacity_SpeechIntro = 0
      Begin Experiment:
        sound_SpeechIntro = sound.Sound('A', secs=-1, stereo=True, hamming=True,
            name='sound_SpeechIntro',sampleRate = 44100)
      Begin Routine:
        if isIntro == 0:
            continueRoutine = False
        else:
            trial_filename = './Sounds/'+IntroWav
            trialdata, trialfs = sf.read(trial_filename, dtype='float32')
            sd.play(Vol*trialdata, samplerate=trialfs, device=speakerDev)
      Each Frame:
        if sound_SpeechIntro.status == FINISHED:
            TCTOpacity_SpeechIntro = 1
    TextComponent text_SpeechIntro
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $SpeechIntroText
      units = norm
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    MouseComponent mouse_SpeechIntro
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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    TextComponent text_ClickToContinue_3
      color = black
      disabled = True
      letterHeight = 0.05
      opacity [set every frame] = $TCTOpacity_SpeechIntro
      pos = (0, -0.8)
      startVal [time (s)] = 1
      text = Klicken Sie, um fortzufahren
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    KeyboardComponent key_resp_10
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VDC
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    KeyboardComponent VDC_quit
      allowedKeys = 'q'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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    KeyboardComponent VDC_key
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
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    TextComponent VDC_text
      letterHeight = 0.1
      pos = (0, 0.04)
      startVal [time (s)] = 0.5
      units = norm
      wrapWidth = 1.45
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    CodeComponent code_vdc
      Code Type = Auto->JS
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      Begin Experiment:
        VDC_READ_DUR = 15.0
        VDC_LEAD_IN  = 0.5
        VDC_RESET_TEXT_EACH_BLOCK = True
      Begin Routine:
        # loop variables from vdc_conditions.xlsx: trial, level_dBA, stim_file

        # Tone first. It blocks ~100 ms and stops whatever was playing, which is
        # exactly what we want here -- the old level is being replaced anyway. This
        # runs before the routine's frame loop, so it costs nothing against t=0.
        vdc_tone_t = sync_tone()

        _d, _sr = vdc_buffers[stim_file]
        sd.play(_d, samplerate=_sr, device=noiseDev, loop=True)

        vdc_t1 = time.time() - timeStart      # babble onset
        vdc_read_start = None                 # captured on the frame text appears
        vdc_page_start = vdc_idx
        vdc_page_times = []
        vdc_last_turn = vdc_t1
        vdc_prev_down = True                  # swallow a click held over
        del _VDC_key_allKeys[:]
        VDC_text.setText(vdc_pages[vdc_idx])
      Each Frame:
        if len(_VDC_quit_allKeys) > 0:
            del _VDC_quit_allKeys[:]
            currentLoop.finished = True
            continueRoutine = False

        if t >= VDC_LEAD_IN + VDC_READ_DUR:
            continueRoutine = False
        elif t >= VDC_LEAD_IN:
            if vdc_read_start is None:
                vdc_read_start = time.time() - timeStart
                vdc_last_turn = vdc_read_start
            _down = VDC_next.isClicked
            _turn = (_down and not vdc_prev_down) or len(_VDC_key_allKeys) > 0
            vdc_prev_down = _down
            if _turn:
                #del _VDC_key_allKeys[:]
                _now = time.time() - timeStart
                vdc_page_times.append((vdc_idx, round(_now - vdc_last_turn, 3)))
                vdc_last_turn = _now
                vdc_idx += 1
                if vdc_idx >= len(vdc_pages):
                    vdc_idx = 0
                VDC_text.setText(vdc_pages[vdc_idx])
      End Routine:
        vdc_t2 = time.time() - timeStart
        vdc_page_times.append((vdc_idx, round(vdc_t2 - vdc_last_turn, 3)))
        vdc_idx += 1
        if vdc_idx >= len(vdc_pages):
            vdc_idx = 0

        # The babble is deliberately NOT stopped here. It runs through the Borg
        # rating and is replaced at the next trial's tone. Cutting it for the rating
        # changes the referent of the effort judgement.

        _tag = '%s_T%s_%ddBA' % (block, trial, int(level_dBA))
        sync_seg('Tone_' + _tag, vdc_tone_t, 0)
        sync_seg('VDC_' + _tag, vdc_read_start, vdc_t2)

        thisExp.addData('Task', 'VDC')
        thisExp.addData('VDC.block', block)
        thisExp.addData('VDC.level_dBA', level_dBA)
        thisExp.addData('VDC.stim_file', stim_file)
        thisExp.addData('VDC.page_start', vdc_page_start)
        thisExp.addData('VDC.page_end', vdc_idx)
        thisExp.addData('VDC.pages_turned', len(vdc_page_times) - 1)
        thisExp.addData('VDC.page_durs', str(vdc_page_times))
    ButtonComponent VDC_next
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0, -.58)
      size = (0.26, 0.085)
      startVal [time (s)] = 0.5
      text = Next page
      units = norm
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    KeyboardComponent key_resp_VDC
      allowedKeys = 'right','return'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine VDC_End
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    CodeComponent code_VDC_end
      Code Type = Auto->JS
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      End Routine:
        sd.stop()
        sync_seg('Tone_%s_end' % block, sync_tone(), 0)
  Routine VDSlider
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    KeyboardComponent VD_key
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_VD_slider
      Code Type = Py
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      Begin Experiment:
        VD_LABELS = ['0\nRelative to no discomfort','1','2','3','4','5','6','7','8','9','10\nMost extreme discomfort I have ever felt']
      Begin Routine:
        VD_slider.reset()
        VD_confirm.opacity = 0      # invisible, and treated as unclickable below
        VD_live = False
        VD_prev_down = True
        del _VD_key_allKeys[:]
        VD_t0 = time.time() - timeStart
      Each Frame:
        if VD_slider.getRating() is not None and not VD_live:
            VD_live = True
            VD_confirm.opacity = 1
            VD_prev_down = True     # the click that SET the slider must not also
            del _VD_key_allKeys[:]  # confirm it
        if VD_live:
            _down = VD_confirm.isClicked
            if (_down and not VD_prev_down) or len(_VD_key_allKeys) > 0:
                continueRoutine = False
            VD_prev_down = _down
      End Routine:
        VDR = VD_slider.getRating()
        VDR_num = block
        with open(filename + '_Ratings.csv', mode='r') as f:
            rows = [r for r in csv.reader(f)]
        rows.append(['VDR_' + str(VDR_num), VDR])
        with open(filename + '_Ratings.csv', mode='w', newline='') as f:
            csv.writer(f).writerows(rows)

        thisExp.addData('VDR', VDR)
        thisExp.addData('VDR.rt', (time.time() - timeStart) - VD_t0)
    TextComponent VD_prompt
      letterHeight = 0.07
      pos = (0, .22)
      startVal [time (s)] = 0.0
      text = My present VOCAL DISCOMFORT is: _____________
      units = norm
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    SliderComponent VD_slider
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = $VD_LABELS
      letterHeight = 0.025
      size = (1.3, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1,2,3,4,5,6,7,8,9,10)
      units = norm
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    ButtonComponent VD_confirm
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0, -0.3)
      size = (0.26, 0.085)
      startVal [time (s)] = 0
      text = Confirm
      units = norm
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Flow
  Routine Ready
  Routine Calibration
  Routine Ready2
  LoopInitiator trials_Intro1 loopType="TrialHandler"
    conditionsFile = PsychoPy/Intro1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'IntroText': 'Welcome to the study. Please click anywhere to continue.', 'IntroWav': 'Intro1A.wav'},
      {'IntroText': 'In this study, you will be guided through various speech and voice tasks.', 'IntroWav': 'Intro1B.wav'},
      {'IntroText': 'During these tasks there may be background noise. This noise will be loud but not harmful. Please ensure you are speaking loud enough to be understood through the noise. ', 'IntroWav': 'Intro2A.wav'},
      {'IntroText': 'You will rate your vocal effort associated with speaking in the noise. ', 'IntroWav': 'Intro2B.wav'}]
    Routine Intro
  LoopTerminator trials_Intro1
  LoopInitiator trials_BorgIntro loopType="TrialHandler"
    conditionsFile = PsychoPy/Borg_Intro.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'BorgText': 'You will use the scale on the left to rate your vocal effort. Please read the handout on the Borg CR100 scale. Then click anywhere to continue.', 'BorgWav': 'BorgIntroA.wav'},
      {'BorgText': 'For this experiment you will type your vocal effort level into the computer using the onscreen numbers. You may use decimals and backspace. When you are finished with your rating click the "ENTER" button.\n\nNow you will practice speaking in noise and then rating your vocal effort level.', 'BorgWav': 'BorgIntroB.wav'}]
    Routine BorgRating_Intro
  LoopTerminator trials_BorgIntro
  Routine NoiseTest
  Routine BorgRating
  LoopInitiator trials_introVD loopType="TrialHandler"
    conditions = [{'IntroText': "Next you will rate your vocal discomfort — physical sensations like soreness, dryness, scratchiness, burning, or tightness, not effort. Relative to no discomfort (0) and the most extreme discomfort you've ever felt (10), rate your present discomfort.", 'IntroWav': 'Intro_VD.wav'}]
    conditionsFile = PsychoPy/Intro_VD.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Intro
  LoopTerminator trials_introVD
  Routine VDSlider
  LoopInitiator trials_Begin loopType="TrialHandler"
    conditions = [{'BeginText': 'Any questions before you begin?', 'BeginWav': 'Begin.wav'}]
    conditionsFile = PsychoPy/Begin.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Begin
  LoopTerminator trials_Begin
  LoopInitiator pre_loop loopType="TrialHandler"
    conditionsFile = PsychoPy/prepost.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SpeechIntroText': 'Say "ah" for  about three seconds. Continue until you see STOP. You will do this three times.', 'SpeechMat': 'ah', 'IntroWav': 'vowel_intro_a.wav', 'isIntro': 1, 'Task': 'Vowel', 'Rep': 1, 'TaskName': 'sv_a', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ah', 'IntroWav': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 2, 'TaskName': 'sv_a', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ah', 'IntroWav': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 3, 'TaskName': 'sv_a', 'RatingTF': 0},
      {'SpeechIntroText': 'Say "ee" for  about three seconds. Continue until you see STOP. You will do this three times.', 'SpeechMat': 'ee', 'IntroWav': 'vowel_intro_i.wav', 'isIntro': 1, 'Task': 'Vowel', 'Rep': 1, 'TaskName': 'sv_i', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ee', 'IntroWav': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 2, 'TaskName': 'sv_i', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ee', 'IntroWav': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 3, 'TaskName': 'sv_i', 'RatingTF': 1},
      {'SpeechIntroText': 'Say  "ahfah", "eefee", or "oofoo" three times in a row, at a comfortable pitch and loudness.', 'SpeechMat': 'ah-fah ah-fah ah-fah', 'IntroWav': 'rff_intro.wav', 'isIntro': 1, 'Task': 'Vowel', 'Rep': 1, 'TaskName': 'rff_a', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ee-fee ee-fee ee-fee', 'IntroWav': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 2, 'TaskName': 'rff_i', 'RatingTF': 0}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
    Routine SpeechIntro
    LoopInitiator speech_trials_pre loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine SpeechTask
    LoopTerminator speech_trials_pre
    LoopInitiator rating_loop_pre loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = RatingTF
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      Routine BorgRating
    LoopTerminator rating_loop_pre
  LoopTerminator pre_loop
  LoopInitiator trials_vdcBegin loopType="TrialHandler"
    conditions = [{'IntroText': 'For the next task, you will read a series of sentences in noise that increases in loudness. Be sure to speak such that you can be understood through the noise. Periodically you will be interupted to rate your current vocal effort level.', 'IntroWav': 'vdcBegin.wav'}]
    conditionsFile = PsychoPy/vdcBegin.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Intro
  LoopTerminator trials_vdcBegin
  LoopInitiator trials_vdc1 loopType="TrialHandler"
    conditionsFile = PsychoPy/vdc_conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial', np.int64(1)), ('level_dBA', np.int64(66)), ('stim_file', 'vdc_babble_66dBA.wav'), ('passage_id', 'P1'), ('passage_text', 'PASTE PASSAGE 1 HERE. Roughly 30 seconds of reading at a normal rate. Keep the cell quoted; commas and apostrophes are fine inside the quotes. Line breaks inside a cell are also fine if quoted.')]),
      OrderedDict([('trial', np.int64(2)), ('level_dBA', np.int64(69)), ('stim_file', 'vdc_babble_69dBA.wav'), ('passage_id', 'P2'), ('passage_text', 'PASTE PASSAGE 2 HERE.')]),
      OrderedDict([('trial', np.int64(3)), ('level_dBA', np.int64(72)), ('stim_file', 'vdc_babble_72dBA.wav'), ('passage_id', 'P3'), ('passage_text', 'PASTE PASSAGE 3 HERE.')]),
      OrderedDict([('trial', np.int64(4)), ('level_dBA', np.int64(75)), ('stim_file', 'vdc_babble_75dBA.wav'), ('passage_id', 'P4'), ('passage_text', 'PASTE PASSAGE 4 HERE.')]),
      OrderedDict([('trial', np.int64(5)), ('level_dBA', np.int64(78)), ('stim_file', 'vdc_babble_78dBA.wav'), ('passage_id', 'P5'), ('passage_text', 'PASTE PASSAGE 5 HERE.')]),
      OrderedDict([('trial', np.int64(6)), ('level_dBA', np.int64(81)), ('stim_file', 'vdc_babble_81dBA.wav'), ('passage_id', 'P6'), ('passage_text', 'PASTE PASSAGE 6 HERE.')]),
      OrderedDict([('trial', np.int64(7)), ('level_dBA', np.int64(84)), ('stim_file', 'vdc_babble_84dBA.wav'), ('passage_id', 'P7'), ('passage_text', 'PASTE PASSAGE 7 HERE.')])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
    Routine VDC
    Routine BorgRating
  LoopTerminator trials_vdc1
  Routine VDC_End
  Routine REST
  LoopInitiator mid_loop0 loopType="TrialHandler"
    conditionsFile = PsychoPy/prepost.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SpeechIntroText': 'Say "ah" for  about three seconds. Continue until you see STOP. You will do this three times.', 'SpeechMat': 'ah', 'IntroWav': 'vowel_intro_a.wav', 'isIntro': 1, 'Task': 'Vowel', 'Rep': 1, 'TaskName': 'sv_a', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ah', 'IntroWav': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 2, 'TaskName': 'sv_a', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ah', 'IntroWav': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 3, 'TaskName': 'sv_a', 'RatingTF': 0},
      {'SpeechIntroText': 'Say "ee" for  about three seconds. Continue until you see STOP. You will do this three times.', 'SpeechMat': 'ee', 'IntroWav': 'vowel_intro_i.wav', 'isIntro': 1, 'Task': 'Vowel', 'Rep': 1, 'TaskName': 'sv_i', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ee', 'IntroWav': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 2, 'TaskName': 'sv_i', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ee', 'IntroWav': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 3, 'TaskName': 'sv_i', 'RatingTF': 1},
      {'SpeechIntroText': 'Say  "ahfah", "eefee", or "oofoo" three times in a row, at a comfortable pitch and loudness.', 'SpeechMat': 'ah-fah ah-fah ah-fah', 'IntroWav': 'rff_intro.wav', 'isIntro': 1, 'Task': 'Vowel', 'Rep': 1, 'TaskName': 'rff_a', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ee-fee ee-fee ee-fee', 'IntroWav': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 2, 'TaskName': 'rff_i', 'RatingTF': 0}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
    Routine SpeechIntro
    LoopInitiator speech_trials_mid0 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 10
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      Routine SpeechTask
    LoopTerminator speech_trials_mid0
    LoopInitiator rating_loop_mid0 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = RatingTF
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      Routine BorgRating
    LoopTerminator rating_loop_mid0
  LoopTerminator mid_loop0
  LoopInitiator trials_vdcCont2 loopType="TrialHandler"
    conditions = [{'IntroText': 'You will now do sentences in increasing noise again.', 'IntroWav': 'vdcCont.wav'}]
    conditionsFile = PsychoPy/vdcCont.xlsx
    loopType = random
    nReps = 1
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    Routine Intro
  LoopTerminator trials_vdcCont2
  LoopInitiator trials_vdc2 loopType="TrialHandler"
    conditionsFile = PsychoPy/vdc_conditions.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial', np.int64(1)), ('level_dBA', np.int64(66)), ('stim_file', 'vdc_babble_66dBA.wav'), ('passage_id', 'P1'), ('passage_text', 'PASTE PASSAGE 1 HERE. Roughly 30 seconds of reading at a normal rate. Keep the cell quoted; commas and apostrophes are fine inside the quotes. Line breaks inside a cell are also fine if quoted.')]),
      OrderedDict([('trial', np.int64(2)), ('level_dBA', np.int64(69)), ('stim_file', 'vdc_babble_69dBA.wav'), ('passage_id', 'P2'), ('passage_text', 'PASTE PASSAGE 2 HERE.')]),
      OrderedDict([('trial', np.int64(3)), ('level_dBA', np.int64(72)), ('stim_file', 'vdc_babble_72dBA.wav'), ('passage_id', 'P3'), ('passage_text', 'PASTE PASSAGE 3 HERE.')]),
      OrderedDict([('trial', np.int64(4)), ('level_dBA', np.int64(75)), ('stim_file', 'vdc_babble_75dBA.wav'), ('passage_id', 'P4'), ('passage_text', 'PASTE PASSAGE 4 HERE.')]),
      OrderedDict([('trial', np.int64(5)), ('level_dBA', np.int64(78)), ('stim_file', 'vdc_babble_78dBA.wav'), ('passage_id', 'P5'), ('passage_text', 'PASTE PASSAGE 5 HERE.')]),
      OrderedDict([('trial', np.int64(6)), ('level_dBA', np.int64(81)), ('stim_file', 'vdc_babble_81dBA.wav'), ('passage_id', 'P6'), ('passage_text', 'PASTE PASSAGE 6 HERE.')]),
      OrderedDict([('trial', np.int64(7)), ('level_dBA', np.int64(84)), ('stim_file', 'vdc_babble_84dBA.wav'), ('passage_id', 'P7'), ('passage_text', 'PASTE PASSAGE 7 HERE.')])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
    Routine VDC
    Routine BorgRating
  LoopTerminator trials_vdc2
  Routine VDC_End
  LoopInitiator trials_picIntro loopType="TrialHandler"
    conditionsFile = PsychoPy/Intro1_pic.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'IntroText': "Next in this study, you will narrate stories from a children's picture book.", 'IntroWav': 'Intro1_pic.wav'},
      {'IntroText': 'First, here is an example.', 'IntroWav': 'Intro2_pic.wav'}]
    Routine Intro
  LoopTerminator trials_picIntro
  LoopInitiator trials_stimIntro1 loopType="TrialHandler"
    conditionsFile = PsychoPy/Pics_Intro1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'picture_image_intro1': 'Pics/Frog01-z.png', 'PicText': 'There was a boy who went down to the pond one afternoon to do some fishing, and he brought his dog and his pet frog along with him. He got himself settled on the bank, with his bucket and his little shovel beside him, dropped his line in the water, and sat back to wait for a bite. The dog and the frog sat together just behind him, watching the water along with him.', 'PicWav': 'Sounds/PicIntroA.wav'},
      {'picture_image_intro1': 'Pics/Frog02-z.png', 'PicText': "He fished for a while, holding onto his pole and keeping an eye on the bobber. Then all of a sudden the frog hopped off toward the water, and the dog sprang up after it, right over the boy's shoulder. The boy lost his balance and toppled headfirst into the pond, so that only his legs were left sticking up out of the water, while the dog went sailing through the air after the frog.", 'PicWav': 'Sounds/PicIntroB.wav'},
      {'picture_image_intro1': 'Pics/Frog03-z.png', 'PicText': 'When he came back up he was soaking wet and none too pleased. He stood up in the water, threw up his arm, and shouted at the dog for knocking him in. But while he was busy complaining, a turtle came crawling out along the pebbly shore, and it looked as though it had taken his fishing line. The frog just sat there quietly in the water nearby, watching the whole thing happen.', 'PicWav': 'Sounds/PicIntroC.wav'}]
    Routine StimIntro1
  LoopTerminator trials_stimIntro1
  LoopInitiator trials_stimPractice loopType="TrialHandler"
    conditions = [{'PracticeText': 'Now you will practice narrating the story. Click anywhere when you need to advance the screen.', 'PracticeWav': 'practice_pic.wav'}]
    conditionsFile = PsychoPy/practice_pic.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Practice
  LoopTerminator trials_stimPractice
  LoopInitiator trials_stimIntro2 loopType="TrialHandler"
    conditionsFile = PsychoPy/Pics_Intro2.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'picture_image_intro2': 'Pics/Frog04-z.png'},
      {'picture_image_intro2': 'Pics/Frog05-z.png'},
      {'picture_image_intro2': 'Pics/Frog06-z.png'}]
    Routine StimIntro2
  LoopTerminator trials_stimIntro2
  LoopInitiator trials_vltIntro loopType="TrialHandler"
    conditionsFile = PsychoPy/Intro_VLT.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'IntroText': 'For the next 30 minutes you will narrate stories from picture books in noise. Periodically you will be interupted and asked to rate your vocal effort. After rating, you will be returned to where you were, please continue from where you stopped.', 'IntroWav': 'Intro1_vlt.wav'},
      {'IntroText': 'Any questions before you begin? If not, please click anywhere to continue.', 'IntroWav': 'Intro2_vlt.wav'}]
    Routine Intro
  LoopTerminator trials_vltIntro
  LoopInitiator trials_noise loopType="TrialHandler"
    conditionsFile = PsychoPy/VLT_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Noise': 'Babble', 'Level': 'High', 'Duration': 3},
      {'Noise': 'Babble', 'Level': 'High', 'Duration': 3},
      {'Noise': 'Babble', 'Level': 'High', 'Duration': 3},
      {'Noise': 'Babble', 'Level': 'High', 'Duration': 3},
      {'Noise': 'Babble', 'Level': 'High', 'Duration': 3}]
    Routine VLT_init
    LoopInitiator VLT_stim loopType="TrialHandler"
      Selected rows = $pages
      conditionsFile = PsychoPy/Pics_all.xlsx
      loopType = sequential
      nReps = 99
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      conditions:
        [{'picture_image': 'Pics/Frog01.png'},
        {'picture_image': 'Pics/Frog02.png'},
        {'picture_image': 'Pics/Frog03.png'},
        {'picture_image': 'Pics/Frog04.png'},
        {'picture_image': 'Pics/Frog05.png'},
        {'picture_image': 'Pics/Frog06.png'},
        {'picture_image': 'Pics/Frog07.png'},
        {'picture_image': 'Pics/Frog08.png'},
        {'picture_image': 'Pics/Frog09.png'},
        {'picture_image': 'Pics/Frog10.png'},
        {'picture_image': 'Pics/Frog11.png'},
        {'picture_image': 'Pics/Frog12.png'},
        {'picture_image': 'Pics/Frog13.png'},
        {'picture_image': 'Pics/Frog14.png'},
        {'picture_image': 'Pics/Frog15.png'}]
      Routine STIMULI
    LoopTerminator VLT_stim
    Routine BorgRating
  LoopTerminator trials_noise
  LoopInitiator trials_TLX loopType="TrialHandler"
    conditionsFile = PsychoPy/TLX.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'TLX_Title': 'Mental Demand', 'TLX_Description': 'How much mental and perceptual activity was required (e.g. thinking, deciding, calculating, remembering, looking, searching, etc.)? Was the task easy or demanding, simple or complex, exacting or forgiving?', 'TLX_Label_Num': 1},
      {'TLX_Title': 'Physical Demand', 'TLX_Description': ' much physical activity was required (e.g. pushing, pulling, turning, controlling, activating, etc.)? Was the task easy or demanding, slow or brisk, slack or strenuous, restful or laborious?', 'TLX_Label_Num': 1},
      {'TLX_Title': 'Temporal Demand', 'TLX_Description': 'How much time pressure did you feel due to the rate or pace at which the tasks or task elements occurred? Was the pace slow and leisurely or rapid and frantic?', 'TLX_Label_Num': 1},
      {'TLX_Title': 'Performance', 'TLX_Description': 'How successful do you think you were in accomplishing the goals of the task set by the experimenter (or yourself)? How satisfied were you with your performance in accomplishing these goals?', 'TLX_Label_Num': 2},
      {'TLX_Title': 'Effort', 'TLX_Description': 'How hard did you have to work (mentally and physically) to accomplish your level of performance?', 'TLX_Label_Num': 1},
      {'TLX_Title': 'Frustration Level', 'TLX_Description': 'How insecure, discouraged, irritated, stressed and annoyed versus secure, gratified, content, relaxed and complacent did you feel during the task?', 'TLX_Label_Num': 1}]
    Routine TLX
  LoopTerminator trials_TLX
  LoopInitiator mid_loop loopType="TrialHandler"
    conditionsFile = PsychoPy/prepost.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SpeechIntroText': 'Say "ah" for  about three seconds. Continue until you see STOP. You will do this three times.', 'SpeechMat': 'ah', 'IntroSound': 'vowel_intro_a.wav', 'isIntro': 1, 'Task': 'Vowel', 'Rep': 1, 'WavName': 'sv_a', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ah', 'IntroSound': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 2, 'WavName': 'sv_a', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ah', 'IntroSound': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 3, 'WavName': 'sv_a', 'RatingTF': 0},
      {'SpeechIntroText': 'Say "ee" for  about three seconds. Continue until you see STOP. You will do this three times.', 'SpeechMat': 'ee', 'IntroSound': 'vowel_intro_i.wav', 'isIntro': 1, 'Task': 'Vowel', 'Rep': 1, 'WavName': 'sv_i', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ee', 'IntroSound': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 2, 'WavName': 'sv_i', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ee', 'IntroSound': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 3, 'WavName': 'sv_i', 'RatingTF': 1},
      {'SpeechIntroText': 'Say  "ahfah", "eefee", or "oofoo" three times in a row, at a comfortable pitch and loudness.', 'SpeechMat': 'ah-fah ah-fah ah-fah', 'IntroSound': 'rff_intro.wav', 'isIntro': 1, 'Task': 'Vowel', 'Rep': 1, 'WavName': 'rff_a', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ee-fee ee-fee ee-fee', 'IntroSound': None, 'isIntro': 1, 'Task': 'Vowel', 'Rep': 2, 'WavName': 'rff_i', 'RatingTF': 0}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
    Routine SpeechIntro
    LoopInitiator speech_trials_mid loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine SpeechTask
    LoopTerminator speech_trials_mid
    LoopInitiator rating_loop_mid loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = RatingTF
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      Routine BorgRating
    LoopTerminator rating_loop_mid
  LoopTerminator mid_loop
  LoopInitiator trials_vdcCont3 loopType="TrialHandler"
    conditions = [{'IntroText': 'You will now do sentences in increasing noise again.', 'IntroWav': 'vdcCont.wav'}]
    conditionsFile = PsychoPy/vdcCont.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Intro
  LoopTerminator trials_vdcCont3
  LoopInitiator trials_vdc3 loopType="TrialHandler"
    conditionsFile = PsychoPy/vdc_conditions.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine VDC
    Routine BorgRating
  LoopTerminator trials_vdc3
  Routine VDC_End
  Routine VDSlider
  Routine REST
  LoopInitiator post_loop loopType="TrialHandler"
    conditionsFile = PsychoPy/prepost.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SpeechIntroText': 'Say "ah" for  about three seconds. Continue until you see STOP. You will do this three times.', 'SpeechMat': 'ah', 'IntroSound': 'vowel_intro_a.wav', 'isIntro': 1, 'Task': 'Vowel', 'Rep': 1, 'WavName': 'sv_a', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ah', 'IntroSound': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 2, 'WavName': 'sv_a', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ah', 'IntroSound': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 3, 'WavName': 'sv_a', 'RatingTF': 0},
      {'SpeechIntroText': 'Say "ee" for  about three seconds. Continue until you see STOP. You will do this three times.', 'SpeechMat': 'ee', 'IntroSound': 'vowel_intro_i.wav', 'isIntro': 1, 'Task': 'Vowel', 'Rep': 1, 'WavName': 'sv_i', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ee', 'IntroSound': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 2, 'WavName': 'sv_i', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ee', 'IntroSound': None, 'isIntro': 0, 'Task': 'Vowel', 'Rep': 3, 'WavName': 'sv_i', 'RatingTF': 1},
      {'SpeechIntroText': 'Say  "ahfah", "eefee", or "oofoo" three times in a row, at a comfortable pitch and loudness.', 'SpeechMat': 'ah-fah ah-fah ah-fah', 'IntroSound': 'rff_intro.wav', 'isIntro': 1, 'Task': 'Vowel', 'Rep': 1, 'WavName': 'rff_a', 'RatingTF': 0},
      {'SpeechIntroText': None, 'SpeechMat': 'ee-fee ee-fee ee-fee', 'IntroSound': None, 'isIntro': 1, 'Task': 'Vowel', 'Rep': 2, 'WavName': 'rff_i', 'RatingTF': 0}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
    Routine SpeechIntro
    LoopInitiator speech_trials_post loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 10
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      Routine SpeechTask
    LoopTerminator speech_trials_post
    LoopInitiator rating_loop_post loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = RatingTF
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      Routine BorgRating
    LoopTerminator rating_loop_post
  LoopTerminator post_loop
  LoopInitiator trials_vdcCont4 loopType="TrialHandler"
    conditions = [{'IntroText': 'You will now do sentences in increasing noise again.', 'IntroWav': 'vdcCont.wav'}]
    conditionsFile = PsychoPy/vdcCont.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Intro
  LoopTerminator trials_vdcCont4
  LoopInitiator trials_vdc4 loopType="TrialHandler"
    conditionsFile = PsychoPy/vdc_conditions.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine VDC
    Routine BorgRating
  LoopTerminator trials_vdc4
  Routine VDC_End
  Routine VDSlider
  LoopInitiator trials_End loopType="TrialHandler"
    conditions = [{'EndText': 'Thank you for your participation.', 'EndWav': 'End.wav'}]
    conditionsFile = PsychoPy/End.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine End
  LoopTerminator trials_End
